20110324_143253 No log in
No user logged in
--{ RES }--
V;200
--{ CFG }--
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1,0;Wash Station Cleaner shallow
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep
2,0;Wash Station Cleaner shallow
2,1;Wash Station Waste
2,2;Wash Station Cleaner deep
3,0;Trough 100ml;Labware7
3,1;Trough 100ml;Labware8
3,2;Trough 100ml;Labware9
4,0;Reagent Cooled 8*15ml;Labware5
4,1;Reagent Cooled 8*50ml;Labware6
7,0;Trough 1000ml;Labware10
10,0;96 Well Microplate;Labware18
10,1;96 Well Microplate;Labware19
33,6;MTP Waste;Labware17
40,0;D-BSSE 96 Well PCR Plate;Labware12
47,0;D-BSSE 96 Well PCR Plate;Labware13
61,0;96 Well Microplate;Labware20
1;System
55;Centrifuge
69;Infinite F200
68;Infinite M200
1;RoboPeel
1;RoboSeal
55;Symbol954
40;TRobot1;D-BSSE 96 Well PCR Plate
47;TRobot2;D-BSSE 96 Well PCR Plate
54;Hotel 5Pos DeepWell
11;Shelf 32Pos Microplate
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--{ RPG }--
Variable(VolOrangeG,"1",1,"Volume to check pipetting precision?",1,0.250000,10.000000,0,2,1,0);
Variable(VolWater,"200-VolOrangeG",0,"",0,1.000000,10.000000,0,2,0,0);
Wash(255,1,1,1,0,"25",500,"0.1",500,10,70,30,1,0,1000,0);
Wash(15,1,1,1,0,"4",500,".1",500,10,70,30,0,0,1000,0);
Wash(240,1,1,1,0,".2",500,".1",500,5,70,10,0,0,1000,0);
BeginLoop("3","Loop1");
Aspirate(15,"Water free dispense","VolWater*4","VolWater*4","VolWater*4","VolWater*4",0,0,0,0,0,0,0,0,3,2,1,"0108l0",0,0);
BeginLoop("4","Loop");
Dispense(15,"Water free dispense","VolWater","VolWater","VolWater","VolWater",0,0,0,0,0,0,0,0,10,0,1,"0C08?0000000000000",2,"Loop1",0,4,"Loop",0,1,0);
EndLoop();
Wash(15,1,1,1,0,"5",500,"4.0",500,10,70,30,1,0,1000,0);
EndLoop();
BeginLoop("12","Loop3");
Aspirate(16,"D-BSSE Te-PS Wet Contact",0,0,0,0,"VolOrangeG",0,0,0,0,0,0,0,4,0,1,"010810",0,0);
Aspirate(32,"D-BSSE Te-PS Wet Contact",0,0,0,0,0,"VolOrangeG",0,0,0,0,0,0,4,0,1,"010810",0,0);
Aspirate(64,"D-BSSE Te-PS Wet Contact",0,0,0,0,0,0,"VolOrangeG",0,0,0,0,0,4,0,1,"010810",0,0);
Aspirate(128,"D-BSSE Te-PS Wet Contact",0,0,0,0,0,0,0,"VolOrangeG",0,0,0,0,4,0,1,"010810",0,0);
Dispense(240,"D-BSSE Te-PS Wet Contact",0,0,0,0,"VolOrangeG","VolOrangeG","VolOrangeG","VolOrangeG",0,0,0,0,10,0,1,"0C08?0000000000000",1,"Loop3",0,1,0);
Wash(240,1,1,1,0,"5",500,"4.0",500,5,70,10,1,0,1000,0);
EndLoop();
Transfer_Rack("10","10",1,0,1,1,0,"","96 Well Microplate","Narrow","","","MP 2Pos H+P Shake","","MP 2Pos H+P Shake","1","(Not defined)","2");
FACTS("HPShaker","HPShaker_HP__ShakeForTime","*271|8*30*30*30*30|2|*30|1|*30|1,5*30*30|255*27","0","");
StartTimer("1");
WaitTimer("1","120");
FACTS("HPShaker","HPShaker_HP__ShakeForTime","*271|8*30*30*30*30|2|*30|1|*30|1,5*30*30|255*27","0","");
StartTimer("1");
WaitTimer("1","120");
FACTS("HPShaker","HPShaker_HP__ShakeForTime","*271|8*30*30*30*30|2|*30|1|*30|1,5*30*30|255*27","0","");
FACTS("InfiniteM200","InfiniteM200_Open","","0","");
Transfer_Rack("10","61",1,0,1,1,0,"","96 Well Microplate","Narrow","","","MP 2Pos H+P Shake","","ReGrip Station","2","(Not defined)","1");
Transfer_Rack("61","68",1,0,1,1,0,"","96 Well Microplate","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("InfiniteM200","InfiniteM200_Measure","C:\Program Files\TECAN\EVOware\output\Infinite\<YYYY-MM-DD HH-mm-ss>.xls|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="install" createdAt="2011-03-04T09:52:03.9375Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement>
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="GRE96ft" plateWithCover="False">
<PlateRange range="A1&tilde;H12" auto="true">
<MeasurementAbsorbance mode="Normal" name="ABS">
<Well auto="true">
<MeasurementReading beamDiameter="700" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="10" rate="25000" />
<ReadingTime integrationTime="0" lagTime="0" readDelay="100000" flash="0" dark="0" />
<ReadingFilter type="Ex" wavelength="4920" bandwidth="90" attenuation="0" usage="ABS" />
</ReadingLabel>
</MeasurementReading>
</Well>
<Well auto="true">
<MeasurementReading beamDiameter="700" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Ref1_Label1" scanType="ScanFixed" refID="1">
<ReadingSettings number="10" rate="25000" />
<ReadingTime integrationTime="0" lagTime="0" readDelay="100000" flash="0" dark="0" />
<ReadingFilter type="Ex" wavelength="6200" bandwidth="90" attenuation="0" usage="ABS" />
</ReadingLabel>
</MeasurementReading>
</Well>
<CustomData />
</MeasurementAbsorbance>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
Transfer_Rack("68","61",1,0,1,1,0,"","96 Well Microplate","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("InfiniteM200","InfiniteM200_Close","","0","");
Transfer_Rack("61","10",1,0,1,1,0,"","96 Well Microplate","Narrow","","","ReGrip Station","","MP 2Pos H+P Shake","1","(Not defined)","1");
