20111117_122139 No log in
No user logged in
--{ RES }--
V;200
--{ CFG }--
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1,0;Wash Station Cleaner shallow
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep
2,0;Wash Station Cleaner shallow
2,1;Wash Station Waste
2,2;Wash Station Cleaner deep
3,0;Trough 100ml;R1
3,1;Trough 100ml;R2
3,2;Trough 100ml;R3
4,0;Reagent Cooled 8*15ml;T1
4,1;Reagent Cooled 8*50ml;T2
7,0;Trough 1000ml;Ethanol
8,0;Trough 100ml;R4
8,1;Trough 100ml;C256S2
8,2;Trough 100ml;R6
9,2;D-BSSE 96 Well Nunc F;P1
10,1;D-BSSE 384 Well Plate White;C316S2
10,3;D-BSSE 96 Well Nunc F;P3
16,0;Block 20Pos 1.5 ml Eppendorf;C317S1
17,0;D-BSSE 96 Well PCR Plate;P4PCR
17,2;D-BSSE 96 Well PCR Plate;P5PCR
24,0;D-BSSE 96 Well PCR Plate;P6PCR
24,2;D-BSSE 96 Well PCR Plate;P7PCR
24,4;D-BSSE 96 Well PCR Plate;P8PCR
33,6;MTP Waste;Waste
40,0;D-BSSE 96 Well PCR Plate;TRobot1
47,0;D-BSSE 96 Well PCR Plate;TRobot2
61,0;D-BSSE 384 Well Plate White;C246S1
-1;System
54;Centrifuge
68;Infinite M200
12;RoboPeel
35;RoboSeal
55;Symbol954
40;TRobot1;D-BSSE 96 Well PCR Plate
47;TRobot2;D-BSSE 96 Well PCR Plate
11;Shelf 32Pos Microplate
59;Hotel 4Pos DWP 1
64;Hotel 4Pos DWP 2
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--{ RPG }--
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Aspirate(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,8,1,1,"010840",0,0);
Aspirate(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,16,0,1,"0504100",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18101000000000000000000000000000000000000000000000000000000",0,0);
Dispense(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,10,1,1,"18101000000000000000000000000000000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
StartTimer("1");
WaitTimer("1","300");
Aspirate(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18101000000000000000000000000000000000000000000000000000000",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000000000000000000000008000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Transfer_Rack("10","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","MP 2Pos H+P Shake","","ReGrip Station","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("61","68",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Users\localadmin\Desktop\Ellis\tania14_renaturation--<YYYMMDD_HHmmss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2014-10-30T20:04:41.4187288Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement>
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="PE384fw_OptiPlate" plateWithCover="False">
<PlateRange range="A13:A13" auto="false">
<MeasurementFluoInt readingMode="Top" mode="Normal" name="FluoInt">
<Well auto="false">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Refill" maxPacketSize="1" readtimelikedispensetime="False" />
<MeasurementWellKinetic loops="1000" timeSpan="PT0.3S" maxDeviation="P10675199DT2H48M5.4775807S" duration="PT1M" useDuration="false">
<Condition expression="CYCLE.CURRENT.8==10">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Inject" maxPacketSize="1" readtimelikedispensetime="False" />
</Condition>
<MeasurementReading refID="8" refTimeMaxDeviation="PT0.3S" refName="KINETIC.RUN.CYCLE" beamDiameter="3000" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="2" rate="25000" />
<ReadingGain gain="60" optimalGainPercentage="0" automaticGain="False" mode="Manual" />
<ReadingTime integrationTime="20" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="4750" bandwidth="90" attenuation="0" usage="FI" />
<ReadingFilter type="Em" wavelength="5100" bandwidth="200" attenuation="0" usage="FI" />
<ReadingZPosition mode="Manual" zPosition="20000" />
</ReadingLabel>
</MeasurementReading>
</MeasurementWellKinetic>
</Well>
</MeasurementFluoInt>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("68","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Transfer_Rack("61","10",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","ReGrip Station","","MP 2Pos H+P Shake","1","(Not defined)","2");
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Aspirate(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,8,1,1,"010840",0,0);
Aspirate(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,16,0,1,"0504@00",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18102000000000000000000000000000000000000000000000000000000",0,0);
Dispense(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,10,1,1,"18102000000000000000000000000000000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
StartTimer("1");
WaitTimer("1","300");
Aspirate(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18102000000000000000000000000000000000000000000000000000000",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"1810000000000000000000000000000@000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Transfer_Rack("10","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","MP 2Pos H+P Shake","","ReGrip Station","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("61","68",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Users\localadmin\Desktop\Ellis\tania14_renaturation--<YYYMMDD_HHmmss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2014-10-30T20:04:41.4187288Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement>
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="PE384fw_OptiPlate" plateWithCover="False">
<PlateRange range="B13:B13" auto="false">
<MeasurementFluoInt readingMode="Top" mode="Normal" name="FluoInt">
<Well auto="false">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Refill" maxPacketSize="1" readtimelikedispensetime="False" />
<MeasurementWellKinetic loops="1000" timeSpan="PT0.3S" maxDeviation="P10675199DT2H48M5.4775807S" duration="PT1M" useDuration="false">
<Condition expression="CYCLE.CURRENT.8==10">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Inject" maxPacketSize="1" readtimelikedispensetime="False" />
</Condition>
<MeasurementReading refID="8" refTimeMaxDeviation="PT0.3S" refName="KINETIC.RUN.CYCLE" beamDiameter="3000" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="2" rate="25000" />
<ReadingGain gain="60" optimalGainPercentage="0" automaticGain="False" mode="Manual" />
<ReadingTime integrationTime="20" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="4750" bandwidth="90" attenuation="0" usage="FI" />
<ReadingFilter type="Em" wavelength="5100" bandwidth="200" attenuation="0" usage="FI" />
<ReadingZPosition mode="Manual" zPosition="20000" />
</ReadingLabel>
</MeasurementReading>
</MeasurementWellKinetic>
</Well>
</MeasurementFluoInt>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("68","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Transfer_Rack("61","10",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","ReGrip Station","","MP 2Pos H+P Shake","1","(Not defined)","2");
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Aspirate(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,8,1,1,"010840",0,0);
Aspirate(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,16,0,1,"0504020",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18104000000000000000000000000000000000000000000000000000000",0,0);
Dispense(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,10,1,1,"18104000000000000000000000000000000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
StartTimer("1");
WaitTimer("1","300");
Aspirate(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18104000000000000000000000000000000000000000000000000000000",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"1810000000000000000000000000000P000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Transfer_Rack("10","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","MP 2Pos H+P Shake","","ReGrip Station","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("61","68",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Users\localadmin\Desktop\Ellis\tania14_renaturation--<YYYMMDD_HHmmss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2014-10-30T20:04:41.4187288Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement>
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="PE384fw_OptiPlate" plateWithCover="False">
<PlateRange range="C13:C13" auto="false">
<MeasurementFluoInt readingMode="Top" mode="Normal" name="FluoInt">
<Well auto="false">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Refill" maxPacketSize="1" readtimelikedispensetime="False" />
<MeasurementWellKinetic loops="1000" timeSpan="PT0.3S" maxDeviation="P10675199DT2H48M5.4775807S" duration="PT1M" useDuration="false">
<Condition expression="CYCLE.CURRENT.8==10">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Inject" maxPacketSize="1" readtimelikedispensetime="False" />
</Condition>
<MeasurementReading refID="8" refTimeMaxDeviation="PT0.3S" refName="KINETIC.RUN.CYCLE" beamDiameter="3000" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="2" rate="25000" />
<ReadingGain gain="60" optimalGainPercentage="0" automaticGain="False" mode="Manual" />
<ReadingTime integrationTime="20" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="4750" bandwidth="90" attenuation="0" usage="FI" />
<ReadingFilter type="Em" wavelength="5100" bandwidth="200" attenuation="0" usage="FI" />
<ReadingZPosition mode="Manual" zPosition="20000" />
</ReadingLabel>
</MeasurementReading>
</MeasurementWellKinetic>
</Well>
</MeasurementFluoInt>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("68","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Transfer_Rack("61","10",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","ReGrip Station","","MP 2Pos H+P Shake","1","(Not defined)","2");
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Aspirate(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,8,1,1,"010840",0,0);
Aspirate(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,16,0,1,"05040P0",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18108000000000000000000000000000000000000000000000000000000",0,0);
Dispense(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,10,1,1,"18108000000000000000000000000000000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
StartTimer("1");
WaitTimer("1","300");
Aspirate(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18108000000000000000000000000000000000000000000000000000000",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"1810000000000000000000000000000p000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Transfer_Rack("10","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","MP 2Pos H+P Shake","","ReGrip Station","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("61","68",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Users\localadmin\Desktop\Ellis\tania14_renaturation--<YYYMMDD_HHmmss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2014-10-30T20:04:41.4187288Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement>
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="PE384fw_OptiPlate" plateWithCover="False">
<PlateRange range="D13:D13" auto="false">
<MeasurementFluoInt readingMode="Top" mode="Normal" name="FluoInt">
<Well auto="false">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Refill" maxPacketSize="1" readtimelikedispensetime="False" />
<MeasurementWellKinetic loops="1000" timeSpan="PT0.3S" maxDeviation="P10675199DT2H48M5.4775807S" duration="PT1M" useDuration="false">
<Condition expression="CYCLE.CURRENT.8==10">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Inject" maxPacketSize="1" readtimelikedispensetime="False" />
</Condition>
<MeasurementReading refID="8" refTimeMaxDeviation="PT0.3S" refName="KINETIC.RUN.CYCLE" beamDiameter="3000" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="2" rate="25000" />
<ReadingGain gain="60" optimalGainPercentage="0" automaticGain="False" mode="Manual" />
<ReadingTime integrationTime="20" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="4750" bandwidth="90" attenuation="0" usage="FI" />
<ReadingFilter type="Em" wavelength="5100" bandwidth="200" attenuation="0" usage="FI" />
<ReadingZPosition mode="Manual" zPosition="20000" />
</ReadingLabel>
</MeasurementReading>
</MeasurementWellKinetic>
</Well>
</MeasurementFluoInt>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("68","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Transfer_Rack("61","10",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","ReGrip Station","","MP 2Pos H+P Shake","1","(Not defined)","2");
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Aspirate(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,8,1,1,"010840",0,0);
Aspirate(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,16,0,1,"0504004",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"1810@000000000000000000000000000000000000000000000000000000",0,0);
Dispense(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,10,1,1,"1810@000000000000000000000000000000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
StartTimer("1");
WaitTimer("1","300");
Aspirate(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"1810@000000000000000000000000000000000000000000000000000000",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000000000000000000000000100000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Transfer_Rack("10","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","MP 2Pos H+P Shake","","ReGrip Station","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("61","68",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Users\localadmin\Desktop\Ellis\tania14_renaturation--<YYYMMDD_HHmmss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2014-10-30T20:04:41.4187288Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement>
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="PE384fw_OptiPlate" plateWithCover="False">
<PlateRange range="E13:E13" auto="false">
<MeasurementFluoInt readingMode="Top" mode="Normal" name="FluoInt">
<Well auto="false">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Refill" maxPacketSize="1" readtimelikedispensetime="False" />
<MeasurementWellKinetic loops="1000" timeSpan="PT0.3S" maxDeviation="P10675199DT2H48M5.4775807S" duration="PT1M" useDuration="false">
<Condition expression="CYCLE.CURRENT.8==10">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Inject" maxPacketSize="1" readtimelikedispensetime="False" />
</Condition>
<MeasurementReading refID="8" refTimeMaxDeviation="PT0.3S" refName="KINETIC.RUN.CYCLE" beamDiameter="3000" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="2" rate="25000" />
<ReadingGain gain="60" optimalGainPercentage="0" automaticGain="False" mode="Manual" />
<ReadingTime integrationTime="20" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="4750" bandwidth="90" attenuation="0" usage="FI" />
<ReadingFilter type="Em" wavelength="5100" bandwidth="200" attenuation="0" usage="FI" />
<ReadingZPosition mode="Manual" zPosition="20000" />
</ReadingLabel>
</MeasurementReading>
</MeasurementWellKinetic>
</Well>
</MeasurementFluoInt>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("68","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Transfer_Rack("61","10",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","ReGrip Station","","MP 2Pos H+P Shake","1","(Not defined)","2");
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Aspirate(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,8,1,1,"010840",0,0);
Aspirate(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,16,0,1,"0504100",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000@00000000000000000000000000000000000000000000000000",0,0);
Dispense(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000@00000000000000000000000000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
StartTimer("1");
WaitTimer("1","300");
Aspirate(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000@00000000000000000000000000000000000000000000000000",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000000000000000000000000000010000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Transfer_Rack("10","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","MP 2Pos H+P Shake","","ReGrip Station","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("61","68",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Users\localadmin\Desktop\Ellis\tania14_renaturation--<YYYMMDD_HHmmss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2014-10-30T20:04:41.4187288Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement>
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="PE384fw_OptiPlate" plateWithCover="False">
<PlateRange range="A15:A15" auto="false">
<MeasurementFluoInt readingMode="Top" mode="Normal" name="FluoInt">
<Well auto="false">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Refill" maxPacketSize="1" readtimelikedispensetime="False" />
<MeasurementWellKinetic loops="1000" timeSpan="PT0.3S" maxDeviation="P10675199DT2H48M5.4775807S" duration="PT1M" useDuration="false">
<Condition expression="CYCLE.CURRENT.8==10">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Inject" maxPacketSize="1" readtimelikedispensetime="False" />
</Condition>
<MeasurementReading refID="8" refTimeMaxDeviation="PT0.3S" refName="KINETIC.RUN.CYCLE" beamDiameter="3000" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="2" rate="25000" />
<ReadingGain gain="60" optimalGainPercentage="0" automaticGain="False" mode="Manual" />
<ReadingTime integrationTime="20" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="4750" bandwidth="90" attenuation="0" usage="FI" />
<ReadingFilter type="Em" wavelength="5100" bandwidth="200" attenuation="0" usage="FI" />
<ReadingZPosition mode="Manual" zPosition="20000" />
</ReadingLabel>
</MeasurementReading>
</MeasurementWellKinetic>
</Well>
</MeasurementFluoInt>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("68","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Transfer_Rack("61","10",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","ReGrip Station","","MP 2Pos H+P Shake","1","(Not defined)","2");
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Aspirate(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,8,1,1,"010840",0,0);
Aspirate(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,16,0,1,"0504@00",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000P00000000000000000000000000000000000000000000000000",0,0);
Dispense(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000P00000000000000000000000000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
StartTimer("1");
WaitTimer("1","300");
Aspirate(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000P00000000000000000000000000000000000000000000000000",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000000000000000000000000000020000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Transfer_Rack("10","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","MP 2Pos H+P Shake","","ReGrip Station","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("61","68",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Users\localadmin\Desktop\Ellis\tania14_renaturation--<YYYMMDD_HHmmss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2014-10-30T20:04:41.4187288Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement>
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="PE384fw_OptiPlate" plateWithCover="False">
<PlateRange range="B15:B15" auto="false">
<MeasurementFluoInt readingMode="Top" mode="Normal" name="FluoInt">
<Well auto="false">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Refill" maxPacketSize="1" readtimelikedispensetime="False" />
<MeasurementWellKinetic loops="1000" timeSpan="PT0.3S" maxDeviation="P10675199DT2H48M5.4775807S" duration="PT1M" useDuration="false">
<Condition expression="CYCLE.CURRENT.8==10">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Inject" maxPacketSize="1" readtimelikedispensetime="False" />
</Condition>
<MeasurementReading refID="8" refTimeMaxDeviation="PT0.3S" refName="KINETIC.RUN.CYCLE" beamDiameter="3000" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="2" rate="25000" />
<ReadingGain gain="60" optimalGainPercentage="0" automaticGain="False" mode="Manual" />
<ReadingTime integrationTime="20" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="4750" bandwidth="90" attenuation="0" usage="FI" />
<ReadingFilter type="Em" wavelength="5100" bandwidth="200" attenuation="0" usage="FI" />
<ReadingZPosition mode="Manual" zPosition="20000" />
</ReadingLabel>
</MeasurementReading>
</MeasurementWellKinetic>
</Well>
</MeasurementFluoInt>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("68","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Transfer_Rack("61","10",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","ReGrip Station","","MP 2Pos H+P Shake","1","(Not defined)","2");
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Aspirate(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,8,1,1,"010840",0,0);
Aspirate(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,16,0,1,"0504020",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000p00000000000000000000000000000000000000000000000000",0,0);
Dispense(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000p00000000000000000000000000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
StartTimer("1");
WaitTimer("1","300");
Aspirate(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000p00000000000000000000000000000000000000000000000000",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000000000000000000000000000040000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Transfer_Rack("10","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","MP 2Pos H+P Shake","","ReGrip Station","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("61","68",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Users\localadmin\Desktop\Ellis\tania14_renaturation--<YYYMMDD_HHmmss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2014-10-30T20:04:41.4187288Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement>
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="PE384fw_OptiPlate" plateWithCover="False">
<PlateRange range="C15:C15" auto="false">
<MeasurementFluoInt readingMode="Top" mode="Normal" name="FluoInt">
<Well auto="false">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Refill" maxPacketSize="1" readtimelikedispensetime="False" />
<MeasurementWellKinetic loops="1000" timeSpan="PT0.3S" maxDeviation="P10675199DT2H48M5.4775807S" duration="PT1M" useDuration="false">
<Condition expression="CYCLE.CURRENT.8==10">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Inject" maxPacketSize="1" readtimelikedispensetime="False" />
</Condition>
<MeasurementReading refID="8" refTimeMaxDeviation="PT0.3S" refName="KINETIC.RUN.CYCLE" beamDiameter="3000" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="2" rate="25000" />
<ReadingGain gain="60" optimalGainPercentage="0" automaticGain="False" mode="Manual" />
<ReadingTime integrationTime="20" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="4750" bandwidth="90" attenuation="0" usage="FI" />
<ReadingFilter type="Em" wavelength="5100" bandwidth="200" attenuation="0" usage="FI" />
<ReadingZPosition mode="Manual" zPosition="20000" />
</ReadingLabel>
</MeasurementReading>
</MeasurementWellKinetic>
</Well>
</MeasurementFluoInt>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("68","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Transfer_Rack("61","10",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","ReGrip Station","","MP 2Pos H+P Shake","1","(Not defined)","2");
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Aspirate(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,8,1,1,"010840",0,0);
Aspirate(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,16,0,1,"05040P0",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000010000000000000000000000000000000000000000000000000",0,0);
Dispense(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000010000000000000000000000000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
StartTimer("1");
WaitTimer("1","300");
Aspirate(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000010000000000000000000000000000000000000000000000000",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000000000000000000000000000080000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Transfer_Rack("10","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","MP 2Pos H+P Shake","","ReGrip Station","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("61","68",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Users\localadmin\Desktop\Ellis\tania14_renaturation--<YYYMMDD_HHmmss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2014-10-30T20:04:41.4187288Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement>
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="PE384fw_OptiPlate" plateWithCover="False">
<PlateRange range="D15:D15" auto="false">
<MeasurementFluoInt readingMode="Top" mode="Normal" name="FluoInt">
<Well auto="false">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Refill" maxPacketSize="1" readtimelikedispensetime="False" />
<MeasurementWellKinetic loops="1000" timeSpan="PT0.3S" maxDeviation="P10675199DT2H48M5.4775807S" duration="PT1M" useDuration="false">
<Condition expression="CYCLE.CURRENT.8==10">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Inject" maxPacketSize="1" readtimelikedispensetime="False" />
</Condition>
<MeasurementReading refID="8" refTimeMaxDeviation="PT0.3S" refName="KINETIC.RUN.CYCLE" beamDiameter="3000" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="2" rate="25000" />
<ReadingGain gain="60" optimalGainPercentage="0" automaticGain="False" mode="Manual" />
<ReadingTime integrationTime="20" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="4750" bandwidth="90" attenuation="0" usage="FI" />
<ReadingFilter type="Em" wavelength="5100" bandwidth="200" attenuation="0" usage="FI" />
<ReadingZPosition mode="Manual" zPosition="20000" />
</ReadingLabel>
</MeasurementReading>
</MeasurementWellKinetic>
</Well>
</MeasurementFluoInt>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("68","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Transfer_Rack("61","10",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","ReGrip Station","","MP 2Pos H+P Shake","1","(Not defined)","2");
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Aspirate(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,8,1,1,"010840",0,0);
Aspirate(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,16,0,1,"0504004",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000020000000000000000000000000000000000000000000000000",0,0);
Dispense(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000020000000000000000000000000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
StartTimer("1");
WaitTimer("1","300");
Aspirate(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000020000000000000000000000000000000000000000000000000",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"181000000000000000000000000000000000@0000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Transfer_Rack("10","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","MP 2Pos H+P Shake","","ReGrip Station","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("61","68",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Users\localadmin\Desktop\Ellis\tania14_renaturation--<YYYMMDD_HHmmss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2014-10-30T20:04:41.4187288Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement>
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="PE384fw_OptiPlate" plateWithCover="False">
<PlateRange range="E15:E15" auto="false">
<MeasurementFluoInt readingMode="Top" mode="Normal" name="FluoInt">
<Well auto="false">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Refill" maxPacketSize="1" readtimelikedispensetime="False" />
<MeasurementWellKinetic loops="1000" timeSpan="PT0.3S" maxDeviation="P10675199DT2H48M5.4775807S" duration="PT1M" useDuration="false">
<Condition expression="CYCLE.CURRENT.8==10">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Inject" maxPacketSize="1" readtimelikedispensetime="False" />
</Condition>
<MeasurementReading refID="8" refTimeMaxDeviation="PT0.3S" refName="KINETIC.RUN.CYCLE" beamDiameter="3000" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="2" rate="25000" />
<ReadingGain gain="60" optimalGainPercentage="0" automaticGain="False" mode="Manual" />
<ReadingTime integrationTime="20" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="4750" bandwidth="90" attenuation="0" usage="FI" />
<ReadingFilter type="Em" wavelength="5100" bandwidth="200" attenuation="0" usage="FI" />
<ReadingZPosition mode="Manual" zPosition="20000" />
</ReadingLabel>
</MeasurementReading>
</MeasurementWellKinetic>
</Well>
</MeasurementFluoInt>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("68","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Transfer_Rack("61","10",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","ReGrip Station","","MP 2Pos H+P Shake","1","(Not defined)","2");
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Aspirate(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,8,1,1,"010840",0,0);
Aspirate(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,16,0,1,"0504100",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000002000000000000000000000000000000000000000000000",0,0);
Dispense(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000002000000000000000000000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
StartTimer("1");
WaitTimer("1","300");
Aspirate(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000002000000000000000000000000000000000000000000000",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"1810000000000000000000000000000000000000@000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Transfer_Rack("10","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","MP 2Pos H+P Shake","","ReGrip Station","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("61","68",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Users\localadmin\Desktop\Ellis\tania14_renaturation--<YYYMMDD_HHmmss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2014-10-30T20:04:41.4187288Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement>
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="PE384fw_OptiPlate" plateWithCover="False">
<PlateRange range="A17:A17" auto="false">
<MeasurementFluoInt readingMode="Top" mode="Normal" name="FluoInt">
<Well auto="false">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Refill" maxPacketSize="1" readtimelikedispensetime="False" />
<MeasurementWellKinetic loops="1000" timeSpan="PT0.3S" maxDeviation="P10675199DT2H48M5.4775807S" duration="PT1M" useDuration="false">
<Condition expression="CYCLE.CURRENT.8==10">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Inject" maxPacketSize="1" readtimelikedispensetime="False" />
</Condition>
<MeasurementReading refID="8" refTimeMaxDeviation="PT0.3S" refName="KINETIC.RUN.CYCLE" beamDiameter="3000" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="2" rate="25000" />
<ReadingGain gain="60" optimalGainPercentage="0" automaticGain="False" mode="Manual" />
<ReadingTime integrationTime="20" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="4750" bandwidth="90" attenuation="0" usage="FI" />
<ReadingFilter type="Em" wavelength="5100" bandwidth="200" attenuation="0" usage="FI" />
<ReadingZPosition mode="Manual" zPosition="20000" />
</ReadingLabel>
</MeasurementReading>
</MeasurementWellKinetic>
</Well>
</MeasurementFluoInt>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("68","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Transfer_Rack("61","10",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","ReGrip Station","","MP 2Pos H+P Shake","1","(Not defined)","2");
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Aspirate(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,8,1,1,"010840",0,0);
Aspirate(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,16,0,1,"0504@00",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000004000000000000000000000000000000000000000000000",0,0);
Dispense(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000004000000000000000000000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
StartTimer("1");
WaitTimer("1","300");
Aspirate(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000004000000000000000000000000000000000000000000000",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"1810000000000000000000000000000000000000P000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Transfer_Rack("10","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","MP 2Pos H+P Shake","","ReGrip Station","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("61","68",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Users\localadmin\Desktop\Ellis\tania14_renaturation--<YYYMMDD_HHmmss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2014-10-30T20:04:41.4187288Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement>
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="PE384fw_OptiPlate" plateWithCover="False">
<PlateRange range="B17:B17" auto="false">
<MeasurementFluoInt readingMode="Top" mode="Normal" name="FluoInt">
<Well auto="false">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Refill" maxPacketSize="1" readtimelikedispensetime="False" />
<MeasurementWellKinetic loops="1000" timeSpan="PT0.3S" maxDeviation="P10675199DT2H48M5.4775807S" duration="PT1M" useDuration="false">
<Condition expression="CYCLE.CURRENT.8==10">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Inject" maxPacketSize="1" readtimelikedispensetime="False" />
</Condition>
<MeasurementReading refID="8" refTimeMaxDeviation="PT0.3S" refName="KINETIC.RUN.CYCLE" beamDiameter="3000" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="2" rate="25000" />
<ReadingGain gain="60" optimalGainPercentage="0" automaticGain="False" mode="Manual" />
<ReadingTime integrationTime="20" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="4750" bandwidth="90" attenuation="0" usage="FI" />
<ReadingFilter type="Em" wavelength="5100" bandwidth="200" attenuation="0" usage="FI" />
<ReadingZPosition mode="Manual" zPosition="20000" />
</ReadingLabel>
</MeasurementReading>
</MeasurementWellKinetic>
</Well>
</MeasurementFluoInt>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("68","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Transfer_Rack("61","10",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","ReGrip Station","","MP 2Pos H+P Shake","1","(Not defined)","2");
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Aspirate(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,8,1,1,"010840",0,0);
Aspirate(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,16,0,1,"0504020",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000008000000000000000000000000000000000000000000000",0,0);
Dispense(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000008000000000000000000000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
StartTimer("1");
WaitTimer("1","300");
Aspirate(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000008000000000000000000000000000000000000000000000",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"1810000000000000000000000000000000000000p000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Transfer_Rack("10","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","MP 2Pos H+P Shake","","ReGrip Station","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("61","68",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Users\localadmin\Desktop\Ellis\tania14_renaturation--<YYYMMDD_HHmmss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2014-10-30T20:04:41.4187288Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement>
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="PE384fw_OptiPlate" plateWithCover="False">
<PlateRange range="C17:C17" auto="false">
<MeasurementFluoInt readingMode="Top" mode="Normal" name="FluoInt">
<Well auto="false">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Refill" maxPacketSize="1" readtimelikedispensetime="False" />
<MeasurementWellKinetic loops="1000" timeSpan="PT0.3S" maxDeviation="P10675199DT2H48M5.4775807S" duration="PT1M" useDuration="false">
<Condition expression="CYCLE.CURRENT.8==10">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Inject" maxPacketSize="1" readtimelikedispensetime="False" />
</Condition>
<MeasurementReading refID="8" refTimeMaxDeviation="PT0.3S" refName="KINETIC.RUN.CYCLE" beamDiameter="3000" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="2" rate="25000" />
<ReadingGain gain="60" optimalGainPercentage="0" automaticGain="False" mode="Manual" />
<ReadingTime integrationTime="20" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="4750" bandwidth="90" attenuation="0" usage="FI" />
<ReadingFilter type="Em" wavelength="5100" bandwidth="200" attenuation="0" usage="FI" />
<ReadingZPosition mode="Manual" zPosition="20000" />
</ReadingLabel>
</MeasurementReading>
</MeasurementWellKinetic>
</Well>
</MeasurementFluoInt>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("68","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Transfer_Rack("61","10",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","ReGrip Station","","MP 2Pos H+P Shake","1","(Not defined)","2");
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Aspirate(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,8,1,1,"010840",0,0);
Aspirate(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,16,0,1,"05040P0",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"1810000000000@000000000000000000000000000000000000000000000",0,0);
Dispense(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,10,1,1,"1810000000000@000000000000000000000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
StartTimer("1");
WaitTimer("1","300");
Aspirate(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"1810000000000@000000000000000000000000000000000000000000000",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000000000000000000000000000000000100000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Transfer_Rack("10","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","MP 2Pos H+P Shake","","ReGrip Station","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("61","68",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Users\localadmin\Desktop\Ellis\tania14_renaturation--<YYYMMDD_HHmmss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2014-10-30T20:04:41.4187288Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement>
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="PE384fw_OptiPlate" plateWithCover="False">
<PlateRange range="D17:D17" auto="false">
<MeasurementFluoInt readingMode="Top" mode="Normal" name="FluoInt">
<Well auto="false">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Refill" maxPacketSize="1" readtimelikedispensetime="False" />
<MeasurementWellKinetic loops="1000" timeSpan="PT0.3S" maxDeviation="P10675199DT2H48M5.4775807S" duration="PT1M" useDuration="false">
<Condition expression="CYCLE.CURRENT.8==10">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Inject" maxPacketSize="1" readtimelikedispensetime="False" />
</Condition>
<MeasurementReading refID="8" refTimeMaxDeviation="PT0.3S" refName="KINETIC.RUN.CYCLE" beamDiameter="3000" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="2" rate="25000" />
<ReadingGain gain="60" optimalGainPercentage="0" automaticGain="False" mode="Manual" />
<ReadingTime integrationTime="20" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="4750" bandwidth="90" attenuation="0" usage="FI" />
<ReadingFilter type="Em" wavelength="5100" bandwidth="200" attenuation="0" usage="FI" />
<ReadingZPosition mode="Manual" zPosition="20000" />
</ReadingLabel>
</MeasurementReading>
</MeasurementWellKinetic>
</Well>
</MeasurementFluoInt>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("68","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Transfer_Rack("61","10",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","ReGrip Station","","MP 2Pos H+P Shake","1","(Not defined)","2");
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Aspirate(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,8,1,1,"010840",0,0);
Aspirate(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,16,0,1,"0504004",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"1810000000000P000000000000000000000000000000000000000000000",0,0);
Dispense(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,10,1,1,"1810000000000P000000000000000000000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
StartTimer("1");
WaitTimer("1","300");
Aspirate(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"1810000000000P000000000000000000000000000000000000000000000",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000000000000000000000000000000000200000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Transfer_Rack("10","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","MP 2Pos H+P Shake","","ReGrip Station","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("61","68",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Users\localadmin\Desktop\Ellis\tania14_renaturation--<YYYMMDD_HHmmss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2014-10-30T20:04:41.4187288Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement>
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="PE384fw_OptiPlate" plateWithCover="False">
<PlateRange range="E17:E17" auto="false">
<MeasurementFluoInt readingMode="Top" mode="Normal" name="FluoInt">
<Well auto="false">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Refill" maxPacketSize="1" readtimelikedispensetime="False" />
<MeasurementWellKinetic loops="1000" timeSpan="PT0.3S" maxDeviation="P10675199DT2H48M5.4775807S" duration="PT1M" useDuration="false">
<Condition expression="CYCLE.CURRENT.8==10">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Inject" maxPacketSize="1" readtimelikedispensetime="False" />
</Condition>
<MeasurementReading refID="8" refTimeMaxDeviation="PT0.3S" refName="KINETIC.RUN.CYCLE" beamDiameter="3000" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="2" rate="25000" />
<ReadingGain gain="60" optimalGainPercentage="0" automaticGain="False" mode="Manual" />
<ReadingTime integrationTime="20" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="4750" bandwidth="90" attenuation="0" usage="FI" />
<ReadingFilter type="Em" wavelength="5100" bandwidth="200" attenuation="0" usage="FI" />
<ReadingZPosition mode="Manual" zPosition="20000" />
</ReadingLabel>
</MeasurementReading>
</MeasurementWellKinetic>
</Well>
</MeasurementFluoInt>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("68","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Transfer_Rack("61","10",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","ReGrip Station","","MP 2Pos H+P Shake","1","(Not defined)","2");
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Aspirate(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,8,2,1,"010840",0,0);
Aspirate(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,16,0,1,"0504100",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100040000000000000000000000000000000000000000000000000000",0,0);
Dispense(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,10,1,1,"18100040000000000000000000000000000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
StartTimer("1");
WaitTimer("1","300");
Aspirate(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100040000000000000000000000000000000000000000000000000000",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"181000000000000000000000000000000P0000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Transfer_Rack("10","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","MP 2Pos H+P Shake","","ReGrip Station","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("61","68",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Users\localadmin\Desktop\Ellis\tania14_renaturation--<YYYMMDD_HHmmss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2014-10-30T20:04:41.4187288Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement>
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="PE384fw_OptiPlate" plateWithCover="False">
<PlateRange range="A14:A14" auto="false">
<MeasurementFluoInt readingMode="Top" mode="Normal" name="FluoInt">
<Well auto="false">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Refill" maxPacketSize="1" readtimelikedispensetime="False" />
<MeasurementWellKinetic loops="1000" timeSpan="PT0.3S" maxDeviation="P10675199DT2H48M5.4775807S" duration="PT1M" useDuration="false">
<Condition expression="CYCLE.CURRENT.8==10">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Inject" maxPacketSize="1" readtimelikedispensetime="False" />
</Condition>
<MeasurementReading refID="8" refTimeMaxDeviation="PT0.3S" refName="KINETIC.RUN.CYCLE" beamDiameter="3000" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="2" rate="25000" />
<ReadingGain gain="60" optimalGainPercentage="0" automaticGain="False" mode="Manual" />
<ReadingTime integrationTime="20" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="4750" bandwidth="90" attenuation="0" usage="FI" />
<ReadingFilter type="Em" wavelength="5100" bandwidth="200" attenuation="0" usage="FI" />
<ReadingZPosition mode="Manual" zPosition="20000" />
</ReadingLabel>
</MeasurementReading>
</MeasurementWellKinetic>
</Well>
</MeasurementFluoInt>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("68","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Transfer_Rack("61","10",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","ReGrip Station","","MP 2Pos H+P Shake","1","(Not defined)","2");
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Aspirate(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,8,2,1,"010840",0,0);
Aspirate(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,16,0,1,"0504@00",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100080000000000000000000000000000000000000000000000000000",0,0);
Dispense(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,10,1,1,"18100080000000000000000000000000000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
StartTimer("1");
WaitTimer("1","300");
Aspirate(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100080000000000000000000000000000000000000000000000000000",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"181000000000000000000000000000000p0000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Transfer_Rack("10","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","MP 2Pos H+P Shake","","ReGrip Station","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("61","68",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Users\localadmin\Desktop\Ellis\tania14_renaturation--<YYYMMDD_HHmmss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2014-10-30T20:04:41.4187288Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement>
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="PE384fw_OptiPlate" plateWithCover="False">
<PlateRange range="B14:B14" auto="false">
<MeasurementFluoInt readingMode="Top" mode="Normal" name="FluoInt">
<Well auto="false">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Refill" maxPacketSize="1" readtimelikedispensetime="False" />
<MeasurementWellKinetic loops="1000" timeSpan="PT0.3S" maxDeviation="P10675199DT2H48M5.4775807S" duration="PT1M" useDuration="false">
<Condition expression="CYCLE.CURRENT.8==10">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Inject" maxPacketSize="1" readtimelikedispensetime="False" />
</Condition>
<MeasurementReading refID="8" refTimeMaxDeviation="PT0.3S" refName="KINETIC.RUN.CYCLE" beamDiameter="3000" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="2" rate="25000" />
<ReadingGain gain="60" optimalGainPercentage="0" automaticGain="False" mode="Manual" />
<ReadingTime integrationTime="20" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="4750" bandwidth="90" attenuation="0" usage="FI" />
<ReadingFilter type="Em" wavelength="5100" bandwidth="200" attenuation="0" usage="FI" />
<ReadingZPosition mode="Manual" zPosition="20000" />
</ReadingLabel>
</MeasurementReading>
</MeasurementWellKinetic>
</Well>
</MeasurementFluoInt>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("68","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Transfer_Rack("61","10",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","ReGrip Station","","MP 2Pos H+P Shake","1","(Not defined)","2");
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Aspirate(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,8,2,1,"010840",0,0);
Aspirate(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,16,0,1,"0504020",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"181000@0000000000000000000000000000000000000000000000000000",0,0);
Dispense(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,10,1,1,"181000@0000000000000000000000000000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
StartTimer("1");
WaitTimer("1","300");
Aspirate(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"181000@0000000000000000000000000000000000000000000000000000",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000000000000000000000000001000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Transfer_Rack("10","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","MP 2Pos H+P Shake","","ReGrip Station","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("61","68",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Users\localadmin\Desktop\Ellis\tania14_renaturation--<YYYMMDD_HHmmss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2014-10-30T20:04:41.4187288Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement>
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="PE384fw_OptiPlate" plateWithCover="False">
<PlateRange range="C14:C14" auto="false">
<MeasurementFluoInt readingMode="Top" mode="Normal" name="FluoInt">
<Well auto="false">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Refill" maxPacketSize="1" readtimelikedispensetime="False" />
<MeasurementWellKinetic loops="1000" timeSpan="PT0.3S" maxDeviation="P10675199DT2H48M5.4775807S" duration="PT1M" useDuration="false">
<Condition expression="CYCLE.CURRENT.8==10">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Inject" maxPacketSize="1" readtimelikedispensetime="False" />
</Condition>
<MeasurementReading refID="8" refTimeMaxDeviation="PT0.3S" refName="KINETIC.RUN.CYCLE" beamDiameter="3000" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="2" rate="25000" />
<ReadingGain gain="60" optimalGainPercentage="0" automaticGain="False" mode="Manual" />
<ReadingTime integrationTime="20" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="4750" bandwidth="90" attenuation="0" usage="FI" />
<ReadingFilter type="Em" wavelength="5100" bandwidth="200" attenuation="0" usage="FI" />
<ReadingZPosition mode="Manual" zPosition="20000" />
</ReadingLabel>
</MeasurementReading>
</MeasurementWellKinetic>
</Well>
</MeasurementFluoInt>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("68","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Transfer_Rack("61","10",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","ReGrip Station","","MP 2Pos H+P Shake","1","(Not defined)","2");
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Aspirate(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,8,2,1,"010840",0,0);
Aspirate(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,16,0,1,"05040P0",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"181000P0000000000000000000000000000000000000000000000000000",0,0);
Dispense(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,10,1,1,"181000P0000000000000000000000000000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
StartTimer("1");
WaitTimer("1","300");
Aspirate(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"181000P0000000000000000000000000000000000000000000000000000",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000000000000000000000000002000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Transfer_Rack("10","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","MP 2Pos H+P Shake","","ReGrip Station","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("61","68",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Users\localadmin\Desktop\Ellis\tania14_renaturation--<YYYMMDD_HHmmss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2014-10-30T20:04:41.4187288Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement>
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="PE384fw_OptiPlate" plateWithCover="False">
<PlateRange range="D14:D14" auto="false">
<MeasurementFluoInt readingMode="Top" mode="Normal" name="FluoInt">
<Well auto="false">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Refill" maxPacketSize="1" readtimelikedispensetime="False" />
<MeasurementWellKinetic loops="1000" timeSpan="PT0.3S" maxDeviation="P10675199DT2H48M5.4775807S" duration="PT1M" useDuration="false">
<Condition expression="CYCLE.CURRENT.8==10">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Inject" maxPacketSize="1" readtimelikedispensetime="False" />
</Condition>
<MeasurementReading refID="8" refTimeMaxDeviation="PT0.3S" refName="KINETIC.RUN.CYCLE" beamDiameter="3000" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="2" rate="25000" />
<ReadingGain gain="60" optimalGainPercentage="0" automaticGain="False" mode="Manual" />
<ReadingTime integrationTime="20" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="4750" bandwidth="90" attenuation="0" usage="FI" />
<ReadingFilter type="Em" wavelength="5100" bandwidth="200" attenuation="0" usage="FI" />
<ReadingZPosition mode="Manual" zPosition="20000" />
</ReadingLabel>
</MeasurementReading>
</MeasurementWellKinetic>
</Well>
</MeasurementFluoInt>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("68","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Transfer_Rack("61","10",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","ReGrip Station","","MP 2Pos H+P Shake","1","(Not defined)","2");
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Aspirate(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,8,2,1,"010840",0,0);
Aspirate(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,16,0,1,"0504004",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"181000p0000000000000000000000000000000000000000000000000000",0,0);
Dispense(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,10,1,1,"181000p0000000000000000000000000000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
StartTimer("1");
WaitTimer("1","300");
Aspirate(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"181000p0000000000000000000000000000000000000000000000000000",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000000000000000000000000004000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Transfer_Rack("10","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","MP 2Pos H+P Shake","","ReGrip Station","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("61","68",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Users\localadmin\Desktop\Ellis\tania14_renaturation--<YYYMMDD_HHmmss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2014-10-30T20:04:41.4187288Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement>
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="PE384fw_OptiPlate" plateWithCover="False">
<PlateRange range="E14:E14" auto="false">
<MeasurementFluoInt readingMode="Top" mode="Normal" name="FluoInt">
<Well auto="false">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Refill" maxPacketSize="1" readtimelikedispensetime="False" />
<MeasurementWellKinetic loops="1000" timeSpan="PT0.3S" maxDeviation="P10675199DT2H48M5.4775807S" duration="PT1M" useDuration="false">
<Condition expression="CYCLE.CURRENT.8==10">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Inject" maxPacketSize="1" readtimelikedispensetime="False" />
</Condition>
<MeasurementReading refID="8" refTimeMaxDeviation="PT0.3S" refName="KINETIC.RUN.CYCLE" beamDiameter="3000" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="2" rate="25000" />
<ReadingGain gain="60" optimalGainPercentage="0" automaticGain="False" mode="Manual" />
<ReadingTime integrationTime="20" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="4750" bandwidth="90" attenuation="0" usage="FI" />
<ReadingFilter type="Em" wavelength="5100" bandwidth="200" attenuation="0" usage="FI" />
<ReadingZPosition mode="Manual" zPosition="20000" />
</ReadingLabel>
</MeasurementReading>
</MeasurementWellKinetic>
</Well>
</MeasurementFluoInt>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("68","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Transfer_Rack("61","10",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","ReGrip Station","","MP 2Pos H+P Shake","1","(Not defined)","2");
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Aspirate(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,8,2,1,"010840",0,0);
Aspirate(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,16,0,1,"0504100",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"1810000000p000000000000000000000000000000000000000000000000",0,0);
Dispense(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,10,1,1,"1810000000p000000000000000000000000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
StartTimer("1");
WaitTimer("1","300");
Aspirate(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"1810000000p000000000000000000000000000000000000000000000000",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000000000000000000000000000000400000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Transfer_Rack("10","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","MP 2Pos H+P Shake","","ReGrip Station","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("61","68",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Users\localadmin\Desktop\Ellis\tania14_renaturation--<YYYMMDD_HHmmss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2014-10-30T20:04:41.4187288Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement>
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="PE384fw_OptiPlate" plateWithCover="False">
<PlateRange range="A16:A16" auto="false">
<MeasurementFluoInt readingMode="Top" mode="Normal" name="FluoInt">
<Well auto="false">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Refill" maxPacketSize="1" readtimelikedispensetime="False" />
<MeasurementWellKinetic loops="1000" timeSpan="PT0.3S" maxDeviation="P10675199DT2H48M5.4775807S" duration="PT1M" useDuration="false">
<Condition expression="CYCLE.CURRENT.8==10">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Inject" maxPacketSize="1" readtimelikedispensetime="False" />
</Condition>
<MeasurementReading refID="8" refTimeMaxDeviation="PT0.3S" refName="KINETIC.RUN.CYCLE" beamDiameter="3000" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="2" rate="25000" />
<ReadingGain gain="60" optimalGainPercentage="0" automaticGain="False" mode="Manual" />
<ReadingTime integrationTime="20" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="4750" bandwidth="90" attenuation="0" usage="FI" />
<ReadingFilter type="Em" wavelength="5100" bandwidth="200" attenuation="0" usage="FI" />
<ReadingZPosition mode="Manual" zPosition="20000" />
</ReadingLabel>
</MeasurementReading>
</MeasurementWellKinetic>
</Well>
</MeasurementFluoInt>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("68","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Transfer_Rack("61","10",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","ReGrip Station","","MP 2Pos H+P Shake","1","(Not defined)","2");
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Aspirate(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,8,2,1,"010840",0,0);
Aspirate(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,16,0,1,"0504@00",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000100000000000000000000000000000000000000000000000",0,0);
Dispense(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000100000000000000000000000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
StartTimer("1");
WaitTimer("1","300");
Aspirate(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000100000000000000000000000000000000000000000000000",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000000000000000000000000000000800000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Transfer_Rack("10","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","MP 2Pos H+P Shake","","ReGrip Station","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("61","68",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Users\localadmin\Desktop\Ellis\tania14_renaturation--<YYYMMDD_HHmmss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2014-10-30T20:04:41.4187288Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement>
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="PE384fw_OptiPlate" plateWithCover="False">
<PlateRange range="B16:B16" auto="false">
<MeasurementFluoInt readingMode="Top" mode="Normal" name="FluoInt">
<Well auto="false">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Refill" maxPacketSize="1" readtimelikedispensetime="False" />
<MeasurementWellKinetic loops="1000" timeSpan="PT0.3S" maxDeviation="P10675199DT2H48M5.4775807S" duration="PT1M" useDuration="false">
<Condition expression="CYCLE.CURRENT.8==10">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Inject" maxPacketSize="1" readtimelikedispensetime="False" />
</Condition>
<MeasurementReading refID="8" refTimeMaxDeviation="PT0.3S" refName="KINETIC.RUN.CYCLE" beamDiameter="3000" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="2" rate="25000" />
<ReadingGain gain="60" optimalGainPercentage="0" automaticGain="False" mode="Manual" />
<ReadingTime integrationTime="20" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="4750" bandwidth="90" attenuation="0" usage="FI" />
<ReadingFilter type="Em" wavelength="5100" bandwidth="200" attenuation="0" usage="FI" />
<ReadingZPosition mode="Manual" zPosition="20000" />
</ReadingLabel>
</MeasurementReading>
</MeasurementWellKinetic>
</Well>
</MeasurementFluoInt>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("68","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Transfer_Rack("61","10",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","ReGrip Station","","MP 2Pos H+P Shake","1","(Not defined)","2");
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Aspirate(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,8,2,1,"010840",0,0);
Aspirate(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,16,0,1,"0504020",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000200000000000000000000000000000000000000000000000",0,0);
Dispense(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000200000000000000000000000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
StartTimer("1");
WaitTimer("1","300");
Aspirate(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000200000000000000000000000000000000000000000000000",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000000000000000000000000000000@00000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Transfer_Rack("10","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","MP 2Pos H+P Shake","","ReGrip Station","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("61","68",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Users\localadmin\Desktop\Ellis\tania14_renaturation--<YYYMMDD_HHmmss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2014-10-30T20:04:41.4187288Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement>
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="PE384fw_OptiPlate" plateWithCover="False">
<PlateRange range="C16:C16" auto="false">
<MeasurementFluoInt readingMode="Top" mode="Normal" name="FluoInt">
<Well auto="false">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Refill" maxPacketSize="1" readtimelikedispensetime="False" />
<MeasurementWellKinetic loops="1000" timeSpan="PT0.3S" maxDeviation="P10675199DT2H48M5.4775807S" duration="PT1M" useDuration="false">
<Condition expression="CYCLE.CURRENT.8==10">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Inject" maxPacketSize="1" readtimelikedispensetime="False" />
</Condition>
<MeasurementReading refID="8" refTimeMaxDeviation="PT0.3S" refName="KINETIC.RUN.CYCLE" beamDiameter="3000" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="2" rate="25000" />
<ReadingGain gain="60" optimalGainPercentage="0" automaticGain="False" mode="Manual" />
<ReadingTime integrationTime="20" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="4750" bandwidth="90" attenuation="0" usage="FI" />
<ReadingFilter type="Em" wavelength="5100" bandwidth="200" attenuation="0" usage="FI" />
<ReadingZPosition mode="Manual" zPosition="20000" />
</ReadingLabel>
</MeasurementReading>
</MeasurementWellKinetic>
</Well>
</MeasurementFluoInt>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("68","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Transfer_Rack("61","10",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","ReGrip Station","","MP 2Pos H+P Shake","1","(Not defined)","2");
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Aspirate(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,8,2,1,"010840",0,0);
Aspirate(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,16,0,1,"05040P0",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000400000000000000000000000000000000000000000000000",0,0);
Dispense(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000400000000000000000000000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
StartTimer("1");
WaitTimer("1","300");
Aspirate(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000400000000000000000000000000000000000000000000000",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000000000000000000000000000000P00000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Transfer_Rack("10","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","MP 2Pos H+P Shake","","ReGrip Station","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("61","68",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Users\localadmin\Desktop\Ellis\tania14_renaturation--<YYYMMDD_HHmmss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2014-10-30T20:04:41.4187288Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement>
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="PE384fw_OptiPlate" plateWithCover="False">
<PlateRange range="D16:D16" auto="false">
<MeasurementFluoInt readingMode="Top" mode="Normal" name="FluoInt">
<Well auto="false">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Refill" maxPacketSize="1" readtimelikedispensetime="False" />
<MeasurementWellKinetic loops="1000" timeSpan="PT0.3S" maxDeviation="P10675199DT2H48M5.4775807S" duration="PT1M" useDuration="false">
<Condition expression="CYCLE.CURRENT.8==10">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Inject" maxPacketSize="1" readtimelikedispensetime="False" />
</Condition>
<MeasurementReading refID="8" refTimeMaxDeviation="PT0.3S" refName="KINETIC.RUN.CYCLE" beamDiameter="3000" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="2" rate="25000" />
<ReadingGain gain="60" optimalGainPercentage="0" automaticGain="False" mode="Manual" />
<ReadingTime integrationTime="20" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="4750" bandwidth="90" attenuation="0" usage="FI" />
<ReadingFilter type="Em" wavelength="5100" bandwidth="200" attenuation="0" usage="FI" />
<ReadingZPosition mode="Manual" zPosition="20000" />
</ReadingLabel>
</MeasurementReading>
</MeasurementWellKinetic>
</Well>
</MeasurementFluoInt>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("68","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Transfer_Rack("61","10",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","ReGrip Station","","MP 2Pos H+P Shake","1","(Not defined)","2");
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Aspirate(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,8,2,1,"010840",0,0);
Aspirate(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,16,0,1,"0504004",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000800000000000000000000000000000000000000000000000",0,0);
Dispense(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000800000000000000000000000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
StartTimer("1");
WaitTimer("1","300");
Aspirate(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000800000000000000000000000000000000000000000000000",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000000000000000000000000000000p00000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Transfer_Rack("10","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","MP 2Pos H+P Shake","","ReGrip Station","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("61","68",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Users\localadmin\Desktop\Ellis\tania14_renaturation--<YYYMMDD_HHmmss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2014-10-30T20:04:41.4187288Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement>
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="PE384fw_OptiPlate" plateWithCover="False">
<PlateRange range="E16:E16" auto="false">
<MeasurementFluoInt readingMode="Top" mode="Normal" name="FluoInt">
<Well auto="false">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Refill" maxPacketSize="1" readtimelikedispensetime="False" />
<MeasurementWellKinetic loops="1000" timeSpan="PT0.3S" maxDeviation="P10675199DT2H48M5.4775807S" duration="PT1M" useDuration="false">
<Condition expression="CYCLE.CURRENT.8==10">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Inject" maxPacketSize="1" readtimelikedispensetime="False" />
</Condition>
<MeasurementReading refID="8" refTimeMaxDeviation="PT0.3S" refName="KINETIC.RUN.CYCLE" beamDiameter="3000" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="2" rate="25000" />
<ReadingGain gain="60" optimalGainPercentage="0" automaticGain="False" mode="Manual" />
<ReadingTime integrationTime="20" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="4750" bandwidth="90" attenuation="0" usage="FI" />
<ReadingFilter type="Em" wavelength="5100" bandwidth="200" attenuation="0" usage="FI" />
<ReadingZPosition mode="Manual" zPosition="20000" />
</ReadingLabel>
</MeasurementReading>
</MeasurementWellKinetic>
</Well>
</MeasurementFluoInt>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("68","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Transfer_Rack("61","10",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","ReGrip Station","","MP 2Pos H+P Shake","1","(Not defined)","2");
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Aspirate(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,8,2,1,"010840",0,0);
Aspirate(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,16,0,1,"0504100",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000000080000000000000000000000000000000000000000000",0,0);
Dispense(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000000080000000000000000000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
StartTimer("1");
WaitTimer("1","300");
Aspirate(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000000080000000000000000000000000000000000000000000",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"181000000000000000000000000000000000000000p0000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Transfer_Rack("10","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","MP 2Pos H+P Shake","","ReGrip Station","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("61","68",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Users\localadmin\Desktop\Ellis\tania14_renaturation--<YYYMMDD_HHmmss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2014-10-30T20:04:41.4187288Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement>
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="PE384fw_OptiPlate" plateWithCover="False">
<PlateRange range="A18:A18" auto="false">
<MeasurementFluoInt readingMode="Top" mode="Normal" name="FluoInt">
<Well auto="false">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Refill" maxPacketSize="1" readtimelikedispensetime="False" />
<MeasurementWellKinetic loops="1000" timeSpan="PT0.3S" maxDeviation="P10675199DT2H48M5.4775807S" duration="PT1M" useDuration="false">
<Condition expression="CYCLE.CURRENT.8==10">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Inject" maxPacketSize="1" readtimelikedispensetime="False" />
</Condition>
<MeasurementReading refID="8" refTimeMaxDeviation="PT0.3S" refName="KINETIC.RUN.CYCLE" beamDiameter="3000" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="2" rate="25000" />
<ReadingGain gain="60" optimalGainPercentage="0" automaticGain="False" mode="Manual" />
<ReadingTime integrationTime="20" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="4750" bandwidth="90" attenuation="0" usage="FI" />
<ReadingFilter type="Em" wavelength="5100" bandwidth="200" attenuation="0" usage="FI" />
<ReadingZPosition mode="Manual" zPosition="20000" />
</ReadingLabel>
</MeasurementReading>
</MeasurementWellKinetic>
</Well>
</MeasurementFluoInt>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("68","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Transfer_Rack("61","10",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","ReGrip Station","","MP 2Pos H+P Shake","1","(Not defined)","2");
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Aspirate(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,8,2,1,"010840",0,0);
Aspirate(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,16,0,1,"0504@00",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"181000000000000@0000000000000000000000000000000000000000000",0,0);
Dispense(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,10,1,1,"181000000000000@0000000000000000000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
StartTimer("1");
WaitTimer("1","300");
Aspirate(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"181000000000000@0000000000000000000000000000000000000000000",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000000000000000000000000000000000001000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Transfer_Rack("10","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","MP 2Pos H+P Shake","","ReGrip Station","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("61","68",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Users\localadmin\Desktop\Ellis\tania14_renaturation--<YYYMMDD_HHmmss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2014-10-30T20:04:41.4187288Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement>
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="PE384fw_OptiPlate" plateWithCover="False">
<PlateRange range="B18:B18" auto="false">
<MeasurementFluoInt readingMode="Top" mode="Normal" name="FluoInt">
<Well auto="false">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Refill" maxPacketSize="1" readtimelikedispensetime="False" />
<MeasurementWellKinetic loops="1000" timeSpan="PT0.3S" maxDeviation="P10675199DT2H48M5.4775807S" duration="PT1M" useDuration="false">
<Condition expression="CYCLE.CURRENT.8==10">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Inject" maxPacketSize="1" readtimelikedispensetime="False" />
</Condition>
<MeasurementReading refID="8" refTimeMaxDeviation="PT0.3S" refName="KINETIC.RUN.CYCLE" beamDiameter="3000" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="2" rate="25000" />
<ReadingGain gain="60" optimalGainPercentage="0" automaticGain="False" mode="Manual" />
<ReadingTime integrationTime="20" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="4750" bandwidth="90" attenuation="0" usage="FI" />
<ReadingFilter type="Em" wavelength="5100" bandwidth="200" attenuation="0" usage="FI" />
<ReadingZPosition mode="Manual" zPosition="20000" />
</ReadingLabel>
</MeasurementReading>
</MeasurementWellKinetic>
</Well>
</MeasurementFluoInt>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("68","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Transfer_Rack("61","10",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","ReGrip Station","","MP 2Pos H+P Shake","1","(Not defined)","2");
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Aspirate(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,8,2,1,"010840",0,0);
Aspirate(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,16,0,1,"0504020",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"181000000000000P0000000000000000000000000000000000000000000",0,0);
Dispense(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,10,1,1,"181000000000000P0000000000000000000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
StartTimer("1");
WaitTimer("1","300");
Aspirate(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"181000000000000P0000000000000000000000000000000000000000000",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000000000000000000000000000000000002000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Transfer_Rack("10","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","MP 2Pos H+P Shake","","ReGrip Station","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("61","68",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Users\localadmin\Desktop\Ellis\tania14_renaturation--<YYYMMDD_HHmmss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2014-10-30T20:04:41.4187288Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement>
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="PE384fw_OptiPlate" plateWithCover="False">
<PlateRange range="C18:C18" auto="false">
<MeasurementFluoInt readingMode="Top" mode="Normal" name="FluoInt">
<Well auto="false">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Refill" maxPacketSize="1" readtimelikedispensetime="False" />
<MeasurementWellKinetic loops="1000" timeSpan="PT0.3S" maxDeviation="P10675199DT2H48M5.4775807S" duration="PT1M" useDuration="false">
<Condition expression="CYCLE.CURRENT.8==10">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Inject" maxPacketSize="1" readtimelikedispensetime="False" />
</Condition>
<MeasurementReading refID="8" refTimeMaxDeviation="PT0.3S" refName="KINETIC.RUN.CYCLE" beamDiameter="3000" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="2" rate="25000" />
<ReadingGain gain="60" optimalGainPercentage="0" automaticGain="False" mode="Manual" />
<ReadingTime integrationTime="20" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="4750" bandwidth="90" attenuation="0" usage="FI" />
<ReadingFilter type="Em" wavelength="5100" bandwidth="200" attenuation="0" usage="FI" />
<ReadingZPosition mode="Manual" zPosition="20000" />
</ReadingLabel>
</MeasurementReading>
</MeasurementWellKinetic>
</Well>
</MeasurementFluoInt>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("68","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Transfer_Rack("61","10",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","ReGrip Station","","MP 2Pos H+P Shake","1","(Not defined)","2");
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Aspirate(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,8,2,1,"010840",0,0);
Aspirate(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,16,0,1,"05040P0",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"181000000000000p0000000000000000000000000000000000000000000",0,0);
Dispense(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,10,1,1,"181000000000000p0000000000000000000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
StartTimer("1");
WaitTimer("1","300");
Aspirate(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"181000000000000p0000000000000000000000000000000000000000000",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000000000000000000000000000000000004000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Transfer_Rack("10","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","MP 2Pos H+P Shake","","ReGrip Station","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("61","68",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Users\localadmin\Desktop\Ellis\tania14_renaturation--<YYYMMDD_HHmmss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2014-10-30T20:04:41.4187288Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement>
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="PE384fw_OptiPlate" plateWithCover="False">
<PlateRange range="D18:D18" auto="false">
<MeasurementFluoInt readingMode="Top" mode="Normal" name="FluoInt">
<Well auto="false">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Refill" maxPacketSize="1" readtimelikedispensetime="False" />
<MeasurementWellKinetic loops="1000" timeSpan="PT0.3S" maxDeviation="P10675199DT2H48M5.4775807S" duration="PT1M" useDuration="false">
<Condition expression="CYCLE.CURRENT.8==10">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Inject" maxPacketSize="1" readtimelikedispensetime="False" />
</Condition>
<MeasurementReading refID="8" refTimeMaxDeviation="PT0.3S" refName="KINETIC.RUN.CYCLE" beamDiameter="3000" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="2" rate="25000" />
<ReadingGain gain="60" optimalGainPercentage="0" automaticGain="False" mode="Manual" />
<ReadingTime integrationTime="20" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="4750" bandwidth="90" attenuation="0" usage="FI" />
<ReadingFilter type="Em" wavelength="5100" bandwidth="200" attenuation="0" usage="FI" />
<ReadingZPosition mode="Manual" zPosition="20000" />
</ReadingLabel>
</MeasurementReading>
</MeasurementWellKinetic>
</Well>
</MeasurementFluoInt>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("68","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Transfer_Rack("61","10",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","ReGrip Station","","MP 2Pos H+P Shake","1","(Not defined)","2");
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Aspirate(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,8,2,1,"010840",0,0);
Aspirate(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,16,0,1,"0504004",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","68",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000000001000000000000000000000000000000000000000000",0,0);
Dispense(2,"Roboliq_Water_Wet_1000_mix3x50ul",0,"7",0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000000001000000000000000000000000000000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
StartTimer("1");
WaitTimer("1","300");
Aspirate(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000000001000000000000000000000000000000000000000000",0,0);
Dispense(1,"Roboliq_Water_Dry_1000","4.5",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100000000000000000000000000000000000000008000000000000000",0,0);
Subroutine("C:\ProgramData\TECAN\EVOware\database\scripts\Roboliq\Roboliq_Clean_Thorough_1000.esc",0);
Transfer_Rack("10","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","MP 2Pos H+P Shake","","ReGrip Station","2","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("61","68",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Users\localadmin\Desktop\Ellis\tania14_renaturation--<YYYMMDD_HHmmss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2014-10-30T20:04:41.4187288Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement>
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="PE384fw_OptiPlate" plateWithCover="False">
<PlateRange range="E18:E18" auto="false">
<MeasurementFluoInt readingMode="Top" mode="Normal" name="FluoInt">
<Well auto="false">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Refill" maxPacketSize="1" readtimelikedispensetime="False" />
<MeasurementWellKinetic loops="1000" timeSpan="PT0.3S" maxDeviation="P10675199DT2H48M5.4775807S" duration="PT1M" useDuration="false">
<Condition expression="CYCLE.CURRENT.8==10">
<Injection channels="1" volumes="86" speeds="200" refillspeeds="100" refillvolumes="500" injectionmode="StandardInjection" injectiontype="Inject" maxPacketSize="1" readtimelikedispensetime="False" />
</Condition>
<MeasurementReading refID="8" refTimeMaxDeviation="PT0.3S" refName="KINETIC.RUN.CYCLE" beamDiameter="3000" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="2" rate="25000" />
<ReadingGain gain="60" optimalGainPercentage="0" automaticGain="False" mode="Manual" />
<ReadingTime integrationTime="20" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="4750" bandwidth="90" attenuation="0" usage="FI" />
<ReadingFilter type="Em" wavelength="5100" bandwidth="200" attenuation="0" usage="FI" />
<ReadingZPosition mode="Manual" zPosition="20000" />
</ReadingLabel>
</MeasurementReading>
</MeasurementWellKinetic>
</Well>
</MeasurementFluoInt>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("68","61",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Transfer_Rack("61","10",1,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","ReGrip Station","","MP 2Pos H+P Shake","1","(Not defined)","2");
