20131114_083025 No log in
No user logged in
--{ RES }--
V;200
--{ CFG }--
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1,0;Wash Station Cleaner shallow
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep
2,0;Wash Station Cleaner shallow
2,1;Wash Station Waste
2,2;Wash Station Cleaner deep
3,2;Trough 100ml LowVol Tips;Sodium hypochlorite
4,0;Reagent Cooled 8*15ml;Falcon 15
4,1;Reagent Cooled 8*50ml;Falcon 50
9,2;Ellis Nunc F96 MicroWell;Dilution
10,1;D-BSSE 384 Well Plate White;Reaction
10,3;Ellis Nunc F96 MicroWell;Culture
16,0;Block 20Pos 1.5 ml Eppendorf;Eppendorf 1.5
33,6;MTP Waste;Labware2
61,0;Ellis Nunc F96 MicroWell;Labware1
1;System
54;Centrifuge
68;Infinite M200
12;RoboPeel
35;RoboSeal
55;Symbol954
40;TRobot1
47;TRobot2
11;Shelf 32Pos Microplate
55;Hotel 5Pos SPE
54;Hotel 3Pos DWP
59;Hotel 4Pos DWP 1
64;Hotel 4Pos DWP 2
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--{ RPG }--
Comment("Preculture 12h, Main 2h, Main 4h, Recation 30min");
Group("Init");
Variable(int_max_columns,"12",1,"Maximal number of columns to be treated.",0,1.000000,10.000000,0,2,1,0);
Wash(255,1,1,1,0,"8.0",500,"32.0",500,10,70,30,1,0,1000,0);
GroupEnd();
Group("Get culture plate");
Transfer_Rack("11","10",0,1,0,1,1,"11","Ellis Nunc F96 MicroWell","Narrow","","","Shelf 32Pos Microplate","Shelf 32Pos Microplate","MP 2Pos H+P Shake","1","1","4");
GroupEnd();
Group("Add media");
BeginLoop("3","Media");
Aspirate(1,"Water_A_1000","800",0,0,0,0,0,0,0,0,0,0,0,4,1,1,"010810",0,0);
Aspirate(2,"Water_A_1000",0,"800",0,0,0,0,0,0,0,0,0,0,4,1,1,"010810",0,0);
Aspirate(4,"Water_A_1000",0,0,"800",0,0,0,0,0,0,0,0,0,4,1,1,"010810",0,0);
Aspirate(8,"Water_A_1000",0,0,0,"800",0,0,0,0,0,0,0,0,4,1,1,"010810",0,0);
Dispense(15,"Water_A_1000","200","200","200","200",0,0,0,0,0,0,0,0,10,3,1,"0C08?0000000000000",1,"Media",0,4,0);
Dispense(15,"Water_A_1000","200","200","200","200",0,0,0,0,0,0,0,0,10,3,1,"0C080N000000000000",1,"Media",0,4,0);
Dispense(15,"Water_A_1000","200","200","200","200",0,0,0,0,0,0,0,0,10,3,1,"0C0800l00000000000",1,"Media",0,4,0);
Dispense(15,"Water_A_1000","200","200","200","200",0,0,0,0,0,0,0,0,10,3,1,"0C08000¨0000000000",1,"Media",0,4,0);
Wash(15,1,1,1,0,"2.0",500,"4.0",500,10,70,30,1,0,1000,0);
EndLoop();
GroupEnd();
Group("Inoculate by operator");
Transfer_Rack("10","55",0,1,0,1,0,"11","Ellis Nunc F96 MicroWell","Narrow","","","MP 2Pos H+P Shake","Shelf 32Pos Microplate","Hotel 5Pos SPE","4","1","1");
UserPrompt("Please inculate plate.",0,-1);
Transfer_Rack("55","61",0,0,0,1,0,"","Ellis Nunc F96 MicroWell","Narrow","","","Hotel 5Pos SPE","","ReGrip Station","1","(Not defined)","1");
GroupEnd();
Group("Pre culture");
FACTS("InfiniteM200","InfiniteM200_Open","","0","");
Transfer_Rack("61","68",0,0,0,1,0,"","Ellis Nunc F96 MicroWell","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("InfiniteM200","InfiniteM200_Close","","0","");
FACTS("InfiniteM200","InfiniteM200_Measure","C:\DataExchange\Pre_Culture_<YYYY-MM-DD HH-mm-ss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2013-10-21T12:18:17.4921225Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement class="Measurement">
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="NUN96ft" plateWithCover="True">
<PlateRange range="A1&tilde;H12" auto="true">
<Temperature module="PLATE" temperature="370" switch="ON" />
<WaitTemperature module="PLATE" minTemperature="365" maxTemperature="375" maxWaitTimeSpan="P10675199DT2H48M5.4775807S" />
<MeasurementAbsorbance mode="Normal" name="ABS">
<MeasurementKinetic loops="2" timeSpan="PT0S" maxDeviation="PT0S" duration="PT12H" useDuration="true">
<Incubation timeSpan="PT16M3S" maxDeviation="PT0S" refTimeID="0" ignoreInLastCycle="True">
<Shaking mode="Orbital" time="PT16M" frequency="0" amplitude="5000" maxDeviation="PT0S" settleTime="PT0S" />
<RemainingWaitTime timeSpan="PT1M" maxDeviation="PT0S" refTimeID="0" ignoreInLastCycle="False" />
</Incubation>
<Well auto="true">
<MeasurementReading refID="6" refName="KINETIC.RUN.CYCLE" beamDiameter="700" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="25" rate="25000" />
<ReadingTime integrationTime="0" lagTime="0" readDelay="0" flash="0" dark="0" />
<ReadingFilter type="Ex" wavelength="6000" bandwidth="90" attenuation="0" usage="ABS" />
</ReadingLabel>
</MeasurementReading>
</Well>
<CustomData />
</MeasurementKinetic>
</MeasurementAbsorbance>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("InfiniteM200","InfiniteM200_Open","","0","");
Transfer_Rack("68","61",0,0,0,1,0,"","Ellis Nunc F96 MicroWell","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("InfiniteM200","InfiniteM200_Close","","0","");
Transfer_Rack("61","10",0,1,0,1,1,"11","Ellis Nunc F96 MicroWell","Narrow","","","ReGrip Station","Shelf 32Pos Microplate","MP 2Pos H+P Shake","1","1","4");
GroupEnd();
Group("Add media");
BeginLoop("3","Media");
Aspirate(1,"Water_A_1000","760",0,0,0,0,0,0,0,0,0,0,0,4,1,1,"010810",0,0);
Aspirate(2,"Water_A_1000",0,"760",0,0,0,0,0,0,0,0,0,0,4,1,1,"010810",0,0);
Aspirate(4,"Water_A_1000",0,0,"760",0,0,0,0,0,0,0,0,0,4,1,1,"010810",0,0);
Aspirate(8,"Water_A_1000",0,0,0,"760",0,0,0,0,0,0,0,0,4,1,1,"010810",0,0);
Dispense(15,"Water_A_1000","190","190","190","190",0,0,0,0,0,0,0,0,10,3,1,"0C08 1000000000000",1,"Media",0,4,0);
Dispense(15,"Water_A_1000","190","190","190","190",0,0,0,0,0,0,0,0,10,3,1,"0C080300000000000",1,"Media",0,4,0);
Dispense(15,"Water_A_1000","190","190","190","190",0,0,0,0,0,0,0,0,10,3,1,"0C0800p70000000000",1,"Media",0,4,0);
Dispense(15,"Water_A_1000","190","190","190","190",0,0,0,0,0,0,0,0,10,3,1,"0C080000?000000000",1,"Media",0,4,0);
Wash(15,1,1,1,0,"2.0",500,"4.0",500,10,70,30,1,0,1000,0);
EndLoop();
GroupEnd();
Group("Inoculate");
BeginLoop("int_max_columns","Inoculate");
Mix(15,"Water_C_1000","150","150","150","150",0,0,0,0,0,0,0,0,10,3,1,"0C08?0000000000000",4,1,"Inoculate",0,1,0);
Aspirate(240,"Water_C_50",0,0,0,0,"10","10","10","10",0,0,0,0,10,3,1,"0C08?0000000000000",1,"Inoculate",0,1,0);
Dispense(240,"Water_C_50",0,0,0,0,"10","10","10","10",0,0,0,0,10,3,1,"0C08 1000000000000",1,"Inoculate",0,1,0);
Wash(255,1,1,1,0,"2.0",500,"4.0",500,10,70,30,1,0,1000,0);
Mix(15,"Water_A_1000","800","800","800","800",0,0,0,0,0,0,0,0,3,2,1,"0108?0",3,0,0);
Mix(240,"Water_C_50",0,0,0,0,"40","40","40","40",0,0,0,0,3,2,1,"0108 1",3,0,0);
Wash(255,1,1,1,0,"2.0",500,"4.0",500,10,70,30,1,0,1000,0);
Wash(255,1,1,1,2,"8.0",500,"32.0",500,10,70,30,1,0,1000,0);
EndLoop();
GroupEnd();
Group("Main culture growth");
Transfer_Rack("10","61",0,1,0,1,0,"11","Ellis Nunc F96 MicroWell","Narrow","","","MP 2Pos H+P Shake","Shelf 32Pos Microplate","ReGrip Station","4","1","1");
FACTS("InfiniteM200","InfiniteM200_Open","","0","");
Transfer_Rack("61","68",0,0,0,1,0,"","Ellis Nunc F96 MicroWell","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("InfiniteM200","InfiniteM200_Close","","0","");
FACTS("InfiniteM200","InfiniteM200_Measure","C:\DataExchange\Main_culture_<YYYY-MM-DD HH-mm-ss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2013-10-21T12:18:54.0231387Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement class="Measurement">
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="NUN96ft" plateWithCover="True">
<PlateRange range="A1&tilde;H12" auto="true">
<Temperature module="PLATE" temperature="370" switch="ON" />
<WaitTemperature module="PLATE" minTemperature="365" maxTemperature="375" maxWaitTimeSpan="P10675199DT2H48M5.4775807S" />
<MeasurementAbsorbance mode="Normal" name="ABS">
<MeasurementKinetic loops="2" timeSpan="PT0S" maxDeviation="PT0S" duration="PT2H" useDuration="true">
<Incubation timeSpan="PT16M3S" maxDeviation="PT0S" refTimeID="0" ignoreInLastCycle="True">
<Shaking mode="Orbital" time="PT16M" frequency="0" amplitude="5000" maxDeviation="PT0S" settleTime="PT0S" />
<RemainingWaitTime timeSpan="PT1M" maxDeviation="PT0S" refTimeID="0" ignoreInLastCycle="False" />
</Incubation>
<Well auto="true">
<MeasurementReading refID="6" refName="KINETIC.RUN.CYCLE" beamDiameter="700" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="25" rate="25000" />
<ReadingTime integrationTime="0" lagTime="0" readDelay="0" flash="0" dark="0" />
<ReadingFilter type="Ex" wavelength="6000" bandwidth="90" attenuation="0" usage="ABS" />
</ReadingLabel>
</MeasurementReading>
</Well>
<CustomData />
</MeasurementKinetic>
</MeasurementAbsorbance>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("InfiniteM200","InfiniteM200_Open","","0","");
Transfer_Rack("68","61",0,0,0,1,0,"","Ellis Nunc F96 MicroWell","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("InfiniteM200","InfiniteM200_Close","","0","");
Transfer_Rack("61","10",0,1,0,1,1,"11","Ellis Nunc F96 MicroWell","Narrow","","","ReGrip Station","Shelf 32Pos Microplate","MP 2Pos H+P Shake","1","1","4");
GroupEnd();
Group("Add IPTG");
Aspirate(1,"Water_A_1000","120",0,0,0,0,0,0,0,0,0,0,0,16,0,1,"0504100",0,0);
Aspirate(2,"Water_A_1000",0,"120",0,0,0,0,0,0,0,0,0,0,16,0,1,"0504100",0,0);
Aspirate(4,"Water_A_1000",0,0,"120",0,0,0,0,0,0,0,0,0,16,0,1,"0504100",0,0);
Aspirate(8,"Water_A_1000",0,0,0,"120",0,0,0,0,0,0,0,0,16,0,1,"0504100",0,0);
BeginLoop("12","MultiDispense");
Dispense(15,"Water_A_1000","10","10","10","10",0,0,0,0,0,0,0,0,10,3,1,"0C08 1000000000000",1,"MultiDispense",0,1,0);
EndLoop();
Wash(15,1,1,1,0,"2.0",500,"4.0",500,10,70,30,1,0,1000,0);
GroupEnd();
Group("Main culture expression");
Transfer_Rack("10","61",0,1,0,1,0,"11","Ellis Nunc F96 MicroWell","Narrow","","","MP 2Pos H+P Shake","Shelf 32Pos Microplate","ReGrip Station","4","1","1");
FACTS("InfiniteM200","InfiniteM200_Open","","0","");
Transfer_Rack("61","68",0,0,0,1,0,"","Ellis Nunc F96 MicroWell","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("InfiniteM200","InfiniteM200_Close","","0","");
FACTS("InfiniteM200","InfiniteM200_Measure","C:\DataExchange\Main_culture_<YYYY-MM-DD HH-mm-ss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2013-10-21T12:19:18.1167345Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement class="Measurement">
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="NUN96ft" plateWithCover="True">
<PlateRange range="A1&tilde;H12" auto="true">
<Temperature module="PLATE" temperature="370" switch="ON" />
<WaitTemperature module="PLATE" minTemperature="365" maxTemperature="375" maxWaitTimeSpan="P10675199DT2H48M5.4775807S" />
<MeasurementAbsorbance mode="Normal" name="ABS">
<MeasurementKinetic loops="2" timeSpan="PT0S" maxDeviation="PT0S" duration="PT4H" useDuration="true">
<Incubation timeSpan="PT16M3S" maxDeviation="PT0S" refTimeID="0" ignoreInLastCycle="True">
<Shaking mode="Orbital" time="PT16M" frequency="0" amplitude="5000" maxDeviation="PT0S" settleTime="PT0S" />
<RemainingWaitTime timeSpan="PT1M" maxDeviation="PT0S" refTimeID="0" ignoreInLastCycle="False" />
</Incubation>
<Well auto="true">
<MeasurementReading refID="6" refName="KINETIC.RUN.CYCLE" beamDiameter="700" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="25" rate="25000" />
<ReadingTime integrationTime="0" lagTime="0" readDelay="0" flash="0" dark="0" />
<ReadingFilter type="Ex" wavelength="6000" bandwidth="90" attenuation="0" usage="ABS" />
</ReadingLabel>
</MeasurementReading>
</Well>
<CustomData />
</MeasurementKinetic>
</MeasurementAbsorbance>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("InfiniteM200","InfiniteM200_Open","","0","");
Transfer_Rack("68","61",0,0,0,1,0,"","Ellis Nunc F96 MicroWell","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("InfiniteM200","InfiniteM200_Close","","0","");
Transfer_Rack("61","10",0,1,0,1,1,"11","Ellis Nunc F96 MicroWell","Narrow","","","ReGrip Station","Shelf 32Pos Microplate","MP 2Pos H+P Shake","1","1","4");
GroupEnd();
Group("Add lysis buffer");
Aspirate(1,"Water_A_1000","240",0,0,0,0,0,0,0,0,0,0,0,16,0,1,"0504200",0,0);
Aspirate(2,"Water_A_1000",0,"240",0,0,0,0,0,0,0,0,0,0,16,0,1,"0504200",0,0);
Aspirate(4,"Water_A_1000",0,0,"240",0,0,0,0,0,0,0,0,0,16,0,1,"0504200",0,0);
Aspirate(8,"Water_A_1000",0,0,0,"240",0,0,0,0,0,0,0,0,16,0,1,"0504200",0,0);
BeginLoop("12","MultiDispense");
Dispense(15,"Water_A_1000","20","20","20","20",0,0,0,0,0,0,0,0,10,3,1,"0C08 1000000000000",1,"MultiDispense",0,1,0);
EndLoop();
Wash(15,1,1,1,0,"2.0",500,"4.0",500,10,70,30,1,0,1000,0);
GroupEnd();
Group("Shake");
FACTS("HPShaker","HPShaker_HP__ShakeForTime","*271|5*30*30*30*30|2|*30|1|*30|1,2*30*30*30|127*27","0","");
GroupEnd();
Group("Mix and lyse");
BeginLoop("int_max_columns","Inoculate");
Mix(15,"Water_C_1000","150","150","150","150",0,0,0,0,0,0,0,0,10,3,1,"0C08 1000000000000",8,1,"Inoculate",0,1,0);
Wash(15,1,1,1,0,"2.0",500,"4.0",500,10,70,30,1,0,1000,0);
Mix(15,"Water_A_1000","800","800","800","800",0,0,0,0,0,0,0,0,3,2,1,"0108?0",3,0,0);
Wash(15,1,1,1,0,"2.0",500,"4.0",500,10,70,30,1,0,1000,0);
Wash(15,1,1,1,2,"8.0",500,"32.0",500,10,70,30,1,0,1000,0);
EndLoop();
GroupEnd();
Group("Get dilution plate");
Transfer_Rack("11","9",0,1,0,1,1,"11","Ellis Nunc F96 MicroWell","Narrow","","","Shelf 32Pos Microplate","Shelf 32Pos Microplate","Downholder","2","2","3");
GroupEnd();
Group("Get reaction plate");
Transfer_Rack("11","10",0,0,0,1,1,"","D-BSSE 384 Well Plate White","Narrow","","","Shelf 32Pos Microplate","","MP 2Pos H+P Shake","3","(Not defined)","2");
GroupEnd();
Group("Add buffer dilution plate");
BeginLoop("2","yBlock");
BeginLoop("2","xBlock");
Aspirate(2,"Water_C_1000",0,"864",0,0,0,0,0,0,0,0,0,0,4,1,1,"010820",0,0);
Aspirate(4,"Water_C_1000",0,0,"864",0,0,0,0,0,0,0,0,0,4,1,1,"010820",0,0);
Aspirate(8,"Water_C_1000",0,0,0,"864",0,0,0,0,0,0,0,0,4,1,1,"010820",0,0);
BeginLoop("6","Column");
Dispense(14,"Water_C_1000",0,"144","144","144",0,0,0,0,0,0,0,0,9,2,1,"0C08>0000000000000",3,"Column",0,1,"xBlock",0,6,"yBlock",1,3,0);
EndLoop();
Wash(15,1,1,1,0,"2.0",500,"4.0",500,10,70,30,1,0,1000,0);
EndLoop();
EndLoop();
GroupEnd();
Group("Add buffer reaction plate");
BeginLoop("2","xxBlock");
BeginLoop("2","yBlock");
Aspirate(1,"Water_C_1000","499.2",0,0,0,0,0,0,0,0,0,0,0,4,1,1,"010820",0,0);
Aspirate(2,"Water_C_1000",0,"499.2",0,0,0,0,0,0,0,0,0,0,4,1,1,"010820",0,0);
Aspirate(4,"Water_C_1000",0,0,"499.2",0,0,0,0,0,0,0,0,0,4,1,1,"010820",0,0);
Aspirate(8,"Water_C_1000",0,0,0,"499.2",0,0,0,0,0,0,0,0,4,1,1,"010820",0,0);
BeginLoop("12","xBlock");
Dispense(15,"Water_C_1000","41.6","41.6","41.6","41.6",0,0,0,0,0,0,0,0,10,1,2,"1810…000000000000000000000000000000000000000000000000000000",3,"xBlock",0,1,"yBlock",1,1,"xxBlock",0,12,0);
EndLoop();
Wash(15,1,1,1,0,"2.0",500,"4.0",500,10,70,30,1,0,1000,0);
EndLoop();
EndLoop();
BeginLoop("2","xxBlock");
BeginLoop("2","yBlock");
Aspirate(1,"Water_C_1000","499.2",0,0,0,0,0,0,0,0,0,0,0,4,1,1,"010820",0,0);
Aspirate(2,"Water_C_1000",0,"499.2",0,0,0,0,0,0,0,0,0,0,4,1,1,"010820",0,0);
Aspirate(12,"Water_C_1000",0,0,"499.2","499.2",0,0,0,0,0,0,0,0,4,1,1,"010860",0,0);
BeginLoop("12","xBlock");
Dispense(15,"Water_C_1000","41.6","41.6","41.6","41.6",0,0,0,0,0,0,0,0,10,1,2,"18100Z10000000000000000000000000000000000000000000000000000",3,"xBlock",0,1,"yBlock",1,1,"xxBlock",0,12,0);
EndLoop();
Wash(15,1,1,1,0,"2.0",500,"4.0",500,10,70,30,1,0,1000,0);
EndLoop();
EndLoop();
GroupEnd();
Group("Dilute and distribute");
BeginLoop("int_max_columns","Inoculate");
Mix(15,"Water_C_1000","150","150","150","150",0,0,0,0,0,0,0,0,10,3,1,"0C08 1000000000000",4,1,"Inoculate",0,1,0);
Aspirate(15,"Water_C_1000","160","16","16","16",0,0,0,0,0,0,0,0,10,3,1,"0C08 1000000000000",1,"Inoculate",0,1,0);
Dispense(15,"Water_C_1000","160","16","16","16",0,0,0,0,0,0,0,0,9,2,1,"0C08?0000000000000",1,"Inoculate",0,1,0);
Wash(15,1,1,1,0,"2.0",500,"4.0",500,10,70,30,1,0,1000,0);
Mix(12,"Water_C_1000",0,0,"120","120",0,0,0,0,0,0,0,0,9,2,1,"0C08<0000000000000",4,1,"Inoculate",0,1,0);
Aspirate(12,"Water_C_1000",0,0,"16","16",0,0,0,0,0,0,0,0,9,2,1,"0C08<0000000000000",1,"Inoculate",0,1,0);
Dispense(12,"Water_C_1000",0,0,"16","16",0,0,0,0,0,0,0,0,9,2,1,"0C08`0000000000000",1,"Inoculate",0,1,0);
Wash(12,1,1,1,0,"2.0",500,"4.0",500,10,70,30,1,0,1000,0);
Mix(8,"Water_C_1000",0,0,0,"120",0,0,0,0,0,0,0,0,9,2,1,"0C08P0000000000000",4,1,"Inoculate",0,1,0);
Aspirate(8,"Water_C_1000",0,0,0,"16",0,0,0,0,0,0,0,0,9,2,1,"0C08P0000000000000",1,"Inoculate",0,1,0);
Dispense(8,"Water_C_1000",0,0,0,"16",0,0,0,0,0,0,0,0,9,2,1,"0C08p0000000000000",1,"Inoculate",0,1,0);
Wash(8,1,1,1,0,"2.0",500,"4.0",500,10,70,30,1,0,1000,0);
Mix(3,"Water_C_1000","120","120",0,0,0,0,0,0,0,0,0,0,9,2,1,"0C0830000000000000",4,1,"Inoculate",0,1,0);
Aspirate(3,"Water_C_1000","64","64",0,0,0,0,0,0,0,0,0,0,9,2,1,"0C0830000000000000",1,"Inoculate",0,1,0);
Dispense(2,"Water_C_1000",0,"8",0,0,0,0,0,0,0,0,0,0,10,1,1,"18102000000000000000000000000000000000000000000000000000000",1,"Inoculate",0,1,0);
Dispense(1,"Water_C_1000","8",0,0,0,0,0,0,0,0,0,0,0,10,1,1,"18100010000000000000000000000000000000000000000000000000000",1,"Inoculate",0,1,0);
BeginLoop("7","distribute");
Dispense(3,"Water_C_1000","8","8",0,0,0,0,0,0,0,0,0,0,10,1,3,"18109000000000000000000000000000000000000000000000000000000",2,"Inoculate",0,1,"distribute",1,2,0);
EndLoop();
Wash(3,1,1,1,0,"2.0",500,"4.0",500,10,70,30,1,0,1000,0);
Mix(12,"Water_C_1000",0,0,"120","120",0,0,0,0,0,0,0,0,9,2,2,"0C08€0000000000000",4,1,"Inoculate",0,1,0);
Aspirate(12,"Water_C_1000",0,0,"64","64",0,0,0,0,0,0,0,0,9,2,2,"0C08€0000000000000",1,"Inoculate",0,1,0);
Dispense(8,"Water_C_1000",0,0,0,"8",0,0,0,0,0,0,0,0,10,1,1,"1810000000000000000000000000000@000000000000000000000000000",1,"Inoculate",0,1,0);
Dispense(4,"Water_C_1000",0,0,"8",0,0,0,0,0,0,0,0,0,10,1,1,"18100000000000000000000000000000080000000000000000000000000",1,"Inoculate",0,1,0);
BeginLoop("7","distribute");
Dispense(12,"Water_C_1000",0,0,"8","8",0,0,0,0,0,0,0,0,10,1,3,"1810000000000000000000000000000x000000000000000000000000000",2,"Inoculate",0,1,"distribute",1,2,0);
EndLoop();
Wash(12,1,1,1,0,"2.0",500,"4.0",500,10,70,30,1,0,1000,0);
Mix(15,"Water_A_1000","800","800","800","800",0,0,0,0,0,0,0,0,3,2,1,"0108?0",3,0,0);
Wash(15,1,1,1,0,"2.0",500,"4.0",500,10,70,30,1,0,1000,0);
Wash(15,1,1,1,2,"8.0",500,"32.0",500,10,70,30,1,0,1000,0);
EndLoop();
GroupEnd();
Group("Add substrate");
FACTS("InfiniteM200","InfiniteM200_Open","","0","");
BeginLoop("2","yyBlock");
BeginLoop("2","yBlock");
BeginLoop("2","xBlock");
Aspirate(15,"Water_A_1000","364.8","364.8","364.8","364.8",0,0,0,0,0,0,0,0,4,0,1,"0108?0",1,"yyBlock",1,4,0);
BeginLoop("12","Column");
Dispense(15,"Water_A_1000","30.4","30.4","30.4","30.4",0,0,0,0,0,0,0,0,10,1,2,"1810…000000000000000000000000000000000000000000000000000000",4,"Column",0,1,"xBlock",0,12,"yBlock",1,1,"yyBlock",1,8,0);
EndLoop();
Wash(15,1,1,1,0,"2.0",500,"4.0",500,10,70,30,1,0,1000,0);
EndLoop();
EndLoop();
EndLoop();
GroupEnd();
Group("Reaction");
Transfer_Rack("10","61",0,0,0,1,0,"","D-BSSE 384 Well Plate White","Narrow","","","MP 2Pos H+P Shake","","ReGrip Station","2","(Not defined)","1");
Transfer_Rack("61","68",0,0,0,1,0,"","Ellis Nunc F96 MicroWell","Wide","","","ReGrip Station","","Infinite M200","1","(Not defined)","1");
FACTS("InfiniteM200","InfiniteM200_Close","","0","");
FACTS("InfiniteM200","InfiniteM200_Measure","C:\DataExchange\Reaction_<YYYY-MM-DD HH-mm-ss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2013-10-21T12:19:49.1790357Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement class="Measurement">
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="PE384fw_OptiPlate" plateWithCover="False">
<PlateRange range="A1&tilde;P24" auto="true">
<MeasurementFluoInt readingMode="Top" mode="Normal" name="FluoInt">
<MeasurementKinetic loops="2" timeSpan="PT0S" maxDeviation="PT0S" duration="PT30M" useDuration="true">
<Well auto="true">
<MeasurementReading refID="4" refName="KINETIC.RUN.CYCLE" beamDiameter="3000" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="25" rate="25000" />
<ReadingGain gain="50" optimalGainPercentage="0" automaticGain="False" mode="Manual" />
<ReadingTime integrationTime="20" lagTime="0" readDelay="0" flash="0" dark="0" />
<ReadingFilter type="Ex" wavelength="3650" bandwidth="90" attenuation="0" usage="FI" />
<ReadingFilter type="Em" wavelength="4450" bandwidth="200" attenuation="0" usage="FI" />
<ReadingZPosition mode="Manual" zPosition="17200" />
</ReadingLabel>
</MeasurementReading>
</Well>
<WaitTime timeSpan="PT2S" maxDeviation="PT0S" refTimeID="0" ignoreInLastCycle="False" />
</MeasurementKinetic>
</MeasurementFluoInt>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("InfiniteM200","InfiniteM200_Open","","0","");
Transfer_Rack("68","61",0,0,0,1,0,"","Ellis Nunc F96 MicroWell","Wide","","","Infinite M200","","ReGrip Station","1","(Not defined)","1");
FACTS("InfiniteM200","InfiniteM200_Close","","0","");
Transfer_Rack("61","11",0,0,0,1,1,"","Ellis Nunc F96 MicroWell","Narrow","","","ReGrip Station","","Shelf 32Pos Microplate","1","(Not defined)","3");
GroupEnd();
Group("Store plates");
Transfer_Rack("9","11",0,1,0,1,0,"11","Ellis Nunc F96 MicroWell","Narrow","","","Downholder","Shelf 32Pos Microplate","Shelf 32Pos Microplate","3","2","2");
Transfer_Rack("10","11",0,1,0,1,0,"11","Ellis Nunc F96 MicroWell","Narrow","","","MP 2Pos H+P Shake","Shelf 32Pos Microplate","Shelf 32Pos Microplate","4","1","1");
GroupEnd();
EndScript(0);
