20151126_163327 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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12,0;DM 96 DWB GripUp sealed;CulturePlate
19,0;DM 96-DWB GripUp;Culture DWB1
19,1;DM 96-DWB GripUp;Culter DWB2
19,2;DM Nunc stronghold;DilutionPlate StartNStop
29,0;DM 96 DWB GripUp sealed;Culture DWB transit
29,1;Pos Camera;Camera
37,0;Trough 1500ml Stainless;Medium
40,0;Trough 100ml;Inoculated medium
40,1;Trough 100ml;Inactivation
40,2;Trough 100ml;Inoculum
41,0;Wash Station Cleaner shallow
41,1;Wash Station Waste
41,2;Wash Station Cleaner deep
42,0;Wash Station Cleaner shallow
42,1;Wash Station Waste
42,2;Wash Station Cleaner deep
44,0;DM Nunc stronghold;DilutionPlate
50,3;DM 96 DWB GripUp sealed;Shaken Culture DWB1
50,11;DM 96 DWB GripUp sealed;Shaken Culture DWB2
1;System
1;Incubator1
2;Incubator2
3;Incubator3
4;Incubator4
5;IncubatorAll
50;Kuhner Shaker ES-X  2x4x2Pos
6;Infinite 200
45;RoboSeal
44;Te-Shake 1Pos Front;DM Nunc stronghold
43;Symbol954
25;Hotel 3x4Pos Grid25to39;DM Nunc stronghold
7;Hotel 4Pos Transfer Grid 0;6 Well Greiner Plate
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--{ RPG }--
Comment("Changes in this version: Adapted to the new layout of deck and shaker hight, improved pipetting, inactivation and wash");
Group("Init");
Command("O2SSO5,0",1,1,,,2,2,0);
Variable(SamplingNumber,"24",1,"How many times should be sampled? (4 repetitions per sampling, max 24 samplings per 96-DWB, max 2 x 96-DWB)",1,1.000000,48.000000,0,2,1,0);
Variable(WellNumber,"SamplingNumber*4",0,"How many times should be sampled? (4 repetitions per sampling, max 24 samplings per 96-DWB, max 2 x 96-DWB)",0,1.000000,48.000000,0,2,0,0);
Variable(SamplingTime,"30",1,"How frequent should be sampled? (Every 15 to 240 min)",1,15.000000,240.000000,0,2,1,0);
Variable(Blank,"3",1,"Do you want BLANK measurements? (1 = None, 2 = All, 3 = First, 4 = Last, 5 = First and Last)",1,1.000000,5.000000,0,2,1,0);
Variable(SealNumber,"2",1,"By how many seal layers should the DWB be closed? (0 to 2)",1,0.000000,2.000000,0,2,1,0);
Variable(ContiShake,"No",1,"Do you want to continue shaking of 2nd DWB while sample withdraw on 1st DWB? (Yes or No)",0,1.000000,5.000000,1,2,1,0);
Variable(ContiCult,"No",1,"Do you want to continue cultivation after the last sampling? (Yes or No)",0,1.000000,5.000000,1,2,1,0);
Variable(FillDWB,"Yes",1,"Do you want to fill the DWB with inoculated medium in the beginning? (Yes or No)",0,0.000000,2.000000,1,2,1,0);
IfThen("FillDWB",0,"Yes");
Variable(DilutionFactor,"100",1,"What is the desired dilution factor of the inoculum in medium? (X-fold, where X is between 20 and 1000)",0,0.000000,2.000000,0,2,1,0);
Variable(CultivationVolume,"1000",1,"What is the desired cultivation volume per well in ul? (500 to 1000)",1,500.000000,1000.000000,0,2,1,0);
Variable(PreDispenseFactor,"5",0,"By how many seal layers should the DWB be closed? (0 to 2)",0,0.000000,2.000000,0,2,0,0);
Variable(InoculationVolumeML,"48/(DilutionFactor/PreDispenseFactor-1)",0,"By how many seal layers should the DWB be closed? (0 to 2)",0,0.000000,2.000000,0,2,0,0);
UserPrompt("Please provide for Filling of the DWB:- At least ~InoculationVolumeML~ ml (+ 5 ml) of Inoculum in sterile 100-ml-Trough on Pos 3. Add sterile and empty 100-ml-trough on Pos 1 for preparation of inoculated medium.",0,-1);
Else();
EndIf();
Variable(DilutionPlateNumber,"(SamplingNumber-1)/6-((SamplingNumber-1)%6)/6+1",0,"What is the desired shaking frequency (150 to 300)?",0,150.000000,300.000000,0,2,0,0);
Variable(DWBnumber,"(SamplingNumber-1)/24-((SamplingNumber-1)%24)/24+1",0,"What is the desired shaking frequency (150 to 300)?",0,150.000000,300.000000,0,2,0,0);
Variable(RunTime,"SamplingTime*SamplingNumber/60+0.1",0,"What is the desired shaking frequency (150 to 300)?",0,150.000000,300.000000,0,2,0,0);
Variable(TotalMediumML,"SamplingNumber*12*0.2",0,"What is the desired shaking frequency (150 to 300)?",0,150.000000,300.000000,0,2,0,0);
IfThen("FillDWB",0,"Yes");
Variable(RunTime,"RunTime+0.25",0,"What is the desired shaking frequency (150 to 300)?",0,150.000000,300.000000,0,2,0,0);
Variable(TotalMediumML,"TotalMediumML+48+DWBnumber*96*(1-1/PreDispenseFactor)*CultivationVolume/1000",0,"What is the desired shaking frequency (150 to 300)?",0,150.000000,300.000000,0,2,0,0);
Else();
EndIf();
UserPrompt("Please turn on the heater of the shaking incubator and set the temp. Predefined shaking frequency of 300 rpm.Fill Pos 1 to ~DilutionPlateNumber~ of 3x4Pos Hotel with empty MTPs WITHOUT lid. Add ~DWBnumber~ sterile 96-DWB on Pos1 (and 2) of 3Pos Carrier. Fill sterile steel trough with ~TotalMediumML~ ml (+ 50 ml) of medium. Add a bleach-filled 100-ml-trough on Pos 2.The routine will take about ~RunTime~ hours for completion of sampling.",0,-1);
Variable(PauseNachSchütteln,"5",0,"What is the desired shaking frequency (150 to 300)?",0,150.000000,300.000000,0,2,0,0);
Variable(InactivationTime,"5",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
Variable(InactivationVolume,"1200",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
Variable(MixingTime,"15",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
GroupEnd();
Group("Init Pipetting");
Wash(255,41,1,41,0,"20",500,"15",500,10,70,30,1,0,1000,0);
Wash(255,41,1,41,0,"15",500,"10",500,10,70,30,0,0,1000,0);
GroupEnd();
Group("Inactivation with 2.4 ml");
Wash(255,42,1,42,2,"6",500,"8",500,10,70,30,1,0,1000,0);
Aspirate(255,">> DM_Water free dispense <<	877","2400","2400","2400","2400","2400","2400","2400","2400",0,0,0,0,40,1,1,"0108¯1",0,0);
StartTimer("2");
WaitTimer("2","InactivationTime");
Dispense(255,">> DM_Water free dispense <<	878","2400","2400","2400","2400","2400","2400","2400","2400",0,0,0,0,40,1,1,"0108¯1",0,0);
Wash(255,41,1,41,2,"6",500,"8",500,10,70,30,1,0,1000,0);
GroupEnd();
IfThen("FillDWB",0,"Yes");
Group("DWB Filling");
Comment("Medium pre-dispense of 80% of final volume per well (dep on PreDispenseFactor)");
Variable(PreDispenseVolume,"CultivationVolume*(1-(1/PreDispenseFactor))",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
Variable(PreDispenseMultipipVolume,"PreDispenseVolume*3",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
BeginLoop("DWBnumber","DWB");
BeginLoop("4","Columns");
Aspirate(255,">> DM_Water free dispense <<	879","PreDispenseMultipipVolume","PreDispenseMultipipVolume","PreDispenseMultipipVolume","PreDispenseMultipipVolume","PreDispenseMultipipVolume","PreDispenseMultipipVolume","PreDispenseMultipipVolume","PreDispenseMultipipVolume",0,0,0,0,37,0,1,"0108¯1",0,0);
BeginLoop("3","Multipipetting");
Dispense(255,"DM_Water free dispense","PreDispenseVolume","PreDispenseVolume","PreDispenseVolume","PreDispenseVolume","PreDispenseVolume","PreDispenseVolume","PreDispenseVolume","PreDispenseVolume",0,0,0,0,19,0,1,"0C08¯1000000000000",3,"Multipipetting",0,1,"Columns",0,3,"DWB",3,1,0);
EndLoop();
Wash(255,41,1,41,2,"3",500,"4",500,10,70,30,1,0,1000,0);
EndLoop();
EndLoop();
Comment("Preparation of inoculated medium");
Variable(InoculationVolumeUL,"InoculationVolumeML*1000",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
Variable(InoculationVolumeUL8Tips,"InoculationVolumeUL/8",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
IfThen("InoculationVolumeUL",3,"2000");
Aspirate(8,">> DM_Water free dispense <<	799",0,0,0,"InoculationVolumeUL",0,0,0,0,0,0,0,0,40,2,1,"010880",0,0);
Dispense(8,">> DM_Water free dispense <<	800",0,0,0,"InoculationVolumeUL",0,0,0,0,0,0,0,0,40,0,1,"010880",0,0);
Else();
Aspirate(255,">> DM_Water free dispense <<	801","InoculationVolumeUL8Tips","InoculationVolumeUL8Tips","InoculationVolumeUL8Tips","InoculationVolumeUL8Tips","InoculationVolumeUL8Tips","InoculationVolumeUL8Tips","InoculationVolumeUL8Tips","InoculationVolumeUL8Tips",0,0,0,0,40,2,1,"0108¯1",0,0);
Dispense(255,">> DM_Water free dispense <<	803","InoculationVolumeUL8Tips","InoculationVolumeUL8Tips","InoculationVolumeUL8Tips","InoculationVolumeUL8Tips","InoculationVolumeUL8Tips","InoculationVolumeUL8Tips","InoculationVolumeUL8Tips","InoculationVolumeUL8Tips",0,0,0,0,40,0,1,"0108¯1",0,0);
EndIf();
Group("Inactivation with 2.4 ml 2");
Wash(255,42,1,42,2,"6",500,"8",500,10,70,30,1,0,1000,0);
Aspirate(255,">> DM_Water free dispense <<	880","2400","2400","2400","2400","2400","2400","2400","2400",0,0,0,0,40,1,1,"0108¯1",0,0);
StartTimer("2");
WaitTimer("2","InactivationTime");
Dispense(255,">> DM_Water free dispense <<	881","2400","2400","2400","2400","2400","2400","2400","2400",0,0,0,0,40,1,1,"0108¯1",0,0);
Wash(255,41,1,41,2,"6",500,"8",500,10,70,30,1,0,1000,0);
GroupEnd();
Comment("Add 48 ml of Medium to Inoculated Medium");
BeginLoop("3","Add Medium");
Aspirate(255,">> DM_Water free dispense <<	882","2000","2000","2000","2000","2000","2000","2000","2000",0,0,0,0,37,0,1,"0108¯1",0,0);
Dispense(255,">> DM_Water free dispense <<	807","2000","2000","2000","2000","2000","2000","2000","2000",0,0,0,0,40,0,1,"0108¯1",0,0);
Wash(255,42,1,42,2,"3",500,"4",500,10,70,30,1,0,1000,0);
EndLoop();
Comment("Mix twice");
BeginLoop("2","Mix");
Aspirate(255,">> DM_Water free dispense <<	815","2000","2000","2000","2000","2000","2000","2000","2000",0,0,0,0,40,0,1,"0108¯1",0,0);
Dispense(255,">> DM_Water free dispense <<	817","2000","2000","2000","2000","2000","2000","2000","2000",0,0,0,0,40,0,1,"0108¯1",0,0);
Wash(255,42,1,42,0,"3",500,"4",500,10,70,30,1,0,1000,0);
EndLoop();
Comment("5x Inoculated medium dispense of 20% of final volume per well (dep on PreDispenseFactor)");
Variable(PreDispenseVolume,"CultivationVolume/PreDispenseFactor",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
Variable(PreDispenseMultipipVolume,"PreDispenseVolume*6",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
BeginLoop("DWBnumber","DWB");
BeginLoop("2","Columns");
Aspirate(255,">> DM_Water free dispense <<	812","PreDispenseMultipipVolume","PreDispenseMultipipVolume","PreDispenseMultipipVolume","PreDispenseMultipipVolume","PreDispenseMultipipVolume","PreDispenseMultipipVolume","PreDispenseMultipipVolume","PreDispenseMultipipVolume",0,0,0,0,40,0,1,"0108¯1",0,0);
BeginLoop("6","Multipipetting");
Dispense(255,"DM_Water free dispense","PreDispenseVolume","PreDispenseVolume","PreDispenseVolume","PreDispenseVolume","PreDispenseVolume","PreDispenseVolume","PreDispenseVolume","PreDispenseVolume",0,0,0,0,19,0,1,"0C08¯1000000000000",3,"Multipipetting",0,1,"Columns",0,6,"DWB",3,1,0);
EndLoop();
Wash(255,42,1,42,0,"3",500,"4",500,10,70,30,1,0,1000,0);
EndLoop();
EndLoop();
Group("Inactivation with 2.4 ml 3");
Wash(255,42,1,42,2,"6",500,"8",500,10,70,30,1,0,1000,0);
Aspirate(255,">> DM_Water free dispense <<	884","2400","2400","2400","2400","2400","2400","2400","2400",0,0,0,0,40,1,1,"0108¯1",0,0);
StartTimer("2");
WaitTimer("2","InactivationTime");
Dispense(255,">> DM_Water free dispense <<	885","2400","2400","2400","2400","2400","2400","2400","2400",0,0,0,0,40,1,1,"0108¯1",0,0);
Wash(255,41,1,41,2,"6",500,"8",500,10,70,30,1,0,1000,0);
GroupEnd();
GroupEnd();
Else();
EndIf();
Comment("Sealing of DWB");
IfThen("SealNumber",2,"0");
BeginLoop("DWBnumber","DWB");
Transfer_Rack("19","45",0,0,0,0,0,"","DM 96-DWB GripUp","Narrow","","","MP 3Pos Flat Grid19","","RoboSeal","LOOP_DWB","(Not defined)","1");
BeginLoop("SealNumber","SealRepetitions");
FACTS("RoboSeal","RoboSeal_Seal","C:\INSTALLFOLDER_NOVEMBER2014_30096901_CH_ETHBS\PLATTENPROGRAMM FUER ROBOSEAL\MTP Riplate SW 2ml.bcf","0","");
EndLoop();
Transfer_Rack("45","19",0,0,0,0,0,"","DM 96-DWB GripUp","Narrow","","","RoboSeal","","MP 3Pos Flat Grid19","1","(Not defined)","LOOP_DWB");
EndLoop();
Else();
EndIf();
Comment("Bring DWB to Shaker and start cultivation");
FACTS("Kuehner","Kuehner_stop","","0","");
FACTS("Cover","Cover_Open","","0","");
BeginLoop("DWBnumber","DWB");
IfThen("LOOP_DWB",0,"1");
Variable(CurrentPlatePos,"4",0,"What is the desired shaking frequency (150 to 300)?",0,150.000000,300.000000,0,2,0,0);
Else();
Variable(CurrentPlatePos,"12",0,"What is the desired shaking frequency (150 to 300)?",0,150.000000,300.000000,0,2,0,0);
EndIf();
Transfer_Rack("19","29",0,0,0,1,0,"","DM 96-DWB GripUp","Narrow","","","MP 3Pos Flat Grid19","","Pickolo-Light-Table","LOOP_DWB","(Not defined)","1");
Transfer_Rack("29","50",0,0,1,1,0,"","DM 96 DWB GripUp sealed","Narrow","","","Pickolo-Light-Table","","Kuhner Shaker ES-X  2x4x2Pos","1","(Not defined)","CurrentPlatePos");
EndLoop();
FACTS("Kuehner","Kuehner_start","300","0","");
FACTS("Cover","Cover_Close","","0","");
Comment("Start Sampling Cycles");
BeginLoop("SamplingNumber","Sampling");
IfThen("LOOP_Sampling",3,"25");
Variable(CurrentPlatePos,"4",0,"What is the desired shaking frequency (150 to 300)?",0,150.000000,300.000000,0,2,0,0);
Else();
Variable(CurrentPlatePos,"12",0,"What is the desired shaking frequency (150 to 300)?",0,150.000000,300.000000,0,2,0,0);
EndIf();
Comment("Get appropriate dilution plate from hotel");
Variable(CurrentDilutionPlate,"(LOOP_Sampling-1)/6-((LOOP_Sampling-1)%6)/6+1",0,"What is the desired shaking frequency (150 to 300)?",0,150.000000,300.000000,0,2,0,0);
Transfer_Rack("25","19",0,0,0,0,0,"","DM Nunc stronghold","Narrow","","","Hotel 3x4Pos Grid25to39","","MP 3Pos Flat Grid19","CurrentDilutionPlate","(Not defined)","3");
Comment("Fill dilution positions with medium");
Variable(PipPosDilutionPlate,"(LOOP_Sampling -1) % 6",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
Variable(PipPosOdd,"PipPosDilutionPlate%2",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
Variable(Versatz,"(PipPosDilutionPlate*16)-(PipPosOdd*12)",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
Group("Fill dilution positions with medium");
Variable(WELL_OFFSET,"0",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
Aspirate(15,">> DM_Water free dispense <<	790","600","600","600","600",0,0,0,0,0,0,0,0,37,0,1,"0108?0",0,0);
Variable(WELL_OFFSET,"Versatz",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
BeginLoop("3","MediumFill");
Dispense(15,"DM_Water free dispense","200","200","200","200",0,0,0,0,0,0,0,0,19,2,1,"0C080N000000000000",1,"MediumFill",0,1,0);
EndLoop();
Variable(WELL_OFFSET,"0",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
Wash(15,41,1,41,0,"3",500,"4",500,10,70,30,1,0,1000,0);
GroupEnd();
Group("Blank measurement");
IfThen("Blank",0,"2");
Comment("Blank for ALL samplings");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("19","6",0,0,1,0,0,"","DM Nunc stronghold","Narrow","","","MP 3Pos Flat Grid19","","Infinite 200","3","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\data_exchange\DM_Growthcurve\RandomSampling_BLANK_<NNN>.xls|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2015-08-20T07:23:25.9975452Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement class="Measurement">
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="COR96fc UV transparent" plateWithCover="False">
<PlateRange range="A1:H12" auto="false">
<MeasurementAbsorbance mode="Normal" name="ABS">
<Well auto="true">
<MeasurementReading beamDiameter="500" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="25" rate="25000" />
<ReadingTime integrationTime="0" lagTime="0" readDelay="10000" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="6000" bandwidth="90" attenuation="0" usage="ABS" />
</ReadingLabel>
</MeasurementReading>
</Well>
<CustomData />
</MeasurementAbsorbance>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("6","19",0,0,0,0,0,"","DM Nunc stronghold","Narrow","","","Infinite 200","","MP 3Pos Flat Grid19","1","(Not defined)","3");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Else();
EndIf();
IfThen("LOOP_Sampling",0,"1");
IfThen("Blank",2,"2");
IfThen("Blank",1,"4");
Comment("Blank for FIRST sampling");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("19","6",0,0,1,0,0,"","DM Nunc stronghold","Narrow","","","MP 3Pos Flat Grid19","","Infinite 200","3","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\data_exchange\DM_Growthcurve\RandomSampling_BLANK_First.xls|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2015-08-20T07:23:02.4761933Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement class="Measurement">
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="COR96fc UV transparent" plateWithCover="False">
<PlateRange range="A1:H12" auto="false">
<MeasurementAbsorbance mode="Normal" name="ABS">
<Well auto="true">
<MeasurementReading beamDiameter="500" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="25" rate="25000" />
<ReadingTime integrationTime="0" lagTime="0" readDelay="10000" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="6000" bandwidth="90" attenuation="0" usage="ABS" />
</ReadingLabel>
</MeasurementReading>
</Well>
<CustomData />
</MeasurementAbsorbance>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("6","19",0,0,0,0,0,"","DM Nunc stronghold","Narrow","","","Infinite 200","","MP 3Pos Flat Grid19","1","(Not defined)","3");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Else();
EndIf();
Else();
EndIf();
Else();
EndIf();
IfThen("LOOP_Sampling",0,"SamplingNumber");
IfThen("Blank",2,"3");
Comment("Blank for LAST sampling");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("19","6",0,0,1,0,0,"","DM Nunc stronghold","Narrow","","","MP 3Pos Flat Grid19","","Infinite 200","3","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\data_exchange\DM_Growthcurve\RandomSampling_BLANK_Last.xls|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2015-08-20T07:22:39.4678927Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement class="Measurement">
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="COR96fc UV transparent" plateWithCover="False">
<PlateRange range="A1:H12" auto="false">
<MeasurementAbsorbance mode="Normal" name="ABS">
<Well auto="true">
<MeasurementReading beamDiameter="500" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="25" rate="25000" />
<ReadingTime integrationTime="0" lagTime="0" readDelay="10000" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="6000" bandwidth="90" attenuation="0" usage="ABS" />
</ReadingLabel>
</MeasurementReading>
</Well>
<CustomData />
</MeasurementAbsorbance>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("6","19",0,0,0,0,0,"","DM Nunc stronghold","Narrow","","","Infinite 200","","MP 3Pos Flat Grid19","1","(Not defined)","3");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
Else();
EndIf();
Else();
EndIf();
GroupEnd();
IfThen("LOOP_Sampling",2,"1");
Variable(WaitBeforeRandomSampling,"(SamplingTime-0.5)*60",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
WaitTimer("4","WaitBeforeRandomSampling");
Else();
EndIf();
Group("Sampling at random positions");
Transfer_Rack("19","44",0,0,0,1,0,"","DM Nunc stronghold","Narrow","","","MP 3Pos Flat Grid19","","Te-Shake 1Pos Front","3","(Not defined)","1");
Comment("Take out culturePlate from shaker");
FACTS("Cover","Cover_Open","","0","");
FACTS("Kuehner","Kuehner_stop","","0","");
StartTimer("1");
WaitTimer("1","PauseNachSchütteln");
Comment("Start/Stop of cultivation cycle");
StartTimer("4");
Transfer_Rack("50","29",0,0,1,1,0,"","DM 96 DWB GripUp sealed","Narrow","","","Kuhner Shaker ES-X  2x4x2Pos","","Pickolo-Light-Table","CurrentPlatePos","(Not defined)","1");
IfThen("ContiShake",0,"Yes");
FACTS("Kuehner","Kuehner_start","300","0","");
Else();
EndIf();
FACTS("Cover","Cover_Close","","0","");
Transfer_Rack("29","12",0,0,1,0,0,"","DM 96 DWB GripUp sealed","Narrow","","","Pickolo-Light-Table","","Downholder DWB","1","(Not defined)","1");
Worklist Import("C:\data_exchange\DM_Growthcurve\RandomSampling_~LOOP_Sampling~.csv","C:\data_exchange\DM_Growthcurve\RandomSampling_temp.gwl","1","DM 96 DWB GripUp sealed","DM Nunc stronghold",1,5,0,259,516,775,1032,1,0,0,0);
Worklist(0,C:\data_exchange\DM_Growthcurve\RandomSampling_temp.gwl,15,"DM_Water free dispense_Sealed",0,1);Wash(15,42,1,42,0,"3",500,"4",500,10,70,30,1,0,1000,0);GetDITI2(0,"DiTi 200ul LiHa",0,0,10,70);DropDITI(0,-1,0,10,70,0);
Worklist(1,,0,"",0,1);Wash(15,42,1,42,0,"1",500,"2",500,10,70,30,1,0,1000,0);GetDITI2(0,"DiTi 200ul LiHa",0,0,10,70);DropDITI(0,-1,0,10,70,0);
Comment("Bring back culture plate to shaker");
Transfer_Rack("12","29",0,0,1,0,0,"","DM 96 DWB GripUp sealed","Narrow","","","Downholder DWB","","Pickolo-Light-Table","1","(Not defined)","1");
FACTS("Cover","Cover_Open","","0","");
IfThen("ContiShake",0,"Yes");
FACTS("Kuehner","Kuehner_stop","","0","");
StartTimer("1");
WaitTimer("1","PauseNachSchütteln");
Else();
EndIf();
Transfer_Rack("29","50",0,0,1,1,0,"","DM 96 DWB GripUp sealed","Narrow","","","Pickolo-Light-Table","","Kuhner Shaker ES-X  2x4x2Pos","1","(Not defined)","CurrentPlatePos");
FACTS("Kuehner","Kuehner_start","300","0","");
FACTS("Cover","Cover_Close","","0","");
GroupEnd();
Group("Dilution");
Group("Serial dilution");
BeginLoop("3","Serial Dilution");
Variable(WELL_OFFSET,"Versatz",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
Aspirate(240,">> DM_Water free dispense <<	887",0,0,0,0,"50","50","50","50",0,0,0,0,44,0,1,"0C08?0000000000000",1,"Serial Dilution",0,1,0);
Dispense(240,">> DM_Water free dispense <<	820",0,0,0,0,"50","50","50","50",0,0,0,0,44,0,1,"0C080N000000000000",1,"Serial Dilution",0,1,0);
Variable(WELL_OFFSET,"0",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
Wash(240,42,1,42,2,"3",500,"4",500,10,70,30,1,0,1000,0);
FACTS("Shaker","Shaker_SetFrequency","1200","0","");
FACTS("Shaker","Shaker_Start","1","0","");
StartTimer("3");
WaitTimer("3","MixingTime");
FACTS("Shaker","Shaker_Stop","","0","");
EndLoop();
Variable(WELL_OFFSET,"Versatz",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
Aspirate(240,">> DM_Water free dispense <<	787",0,0,0,0,"50","50","50","50",0,0,0,0,44,0,1,"0C08000¨0000000000",0,0);
Variable(WELL_OFFSET,"0",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
Group("Inactivation");
Wash(255,42,1,42,2,"6",500,"8",500,10,70,30,1,0,1000,0);
Aspirate(255,">> DM_Water free dispense <<	788","InactivationVolume","InactivationVolume","InactivationVolume","InactivationVolume","InactivationVolume","InactivationVolume","InactivationVolume","InactivationVolume",0,0,0,0,40,1,1,"0108¯1",0,0);
StartTimer("2");
WaitTimer("2","InactivationTime");
Dispense(255,">> DM_Water free dispense <<	789","InactivationVolume","InactivationVolume","InactivationVolume","InactivationVolume","InactivationVolume","InactivationVolume","InactivationVolume","InactivationVolume",0,0,0,0,40,1,1,"0108¯1",0,0);
Wash(255,41,1,41,2,"6",500,"8",500,10,70,30,1,0,1000,0);
GroupEnd();
GroupEnd();
GroupEnd();
Group("OD600nm determination");
Transfer_Rack("44","19",0,0,0,1,0,"","DM Nunc stronghold","Narrow","","","Te-Shake 1Pos Front","","MP 3Pos Flat Grid19","1","(Not defined)","3");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("19","6",0,0,1,0,0,"","DM Nunc stronghold","Narrow","","","MP 3Pos Flat Grid19","","Infinite 200","3","(Not defined)","1");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\data_exchange\DM_Growthcurve\RandomSampling_RESULT_<NNN>.xls|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2015-08-20T07:21:49.1388603Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement class="Measurement">
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="COR96fc UV transparent" plateWithCover="False">
<PlateRange range="A1:H12" auto="false">
<MeasurementAbsorbance mode="Normal" name="ABS">
<Well auto="true">
<MeasurementReading beamDiameter="500" beamGridType="Single" beamGridSize="1" beamEdgeDistance="auto">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingSettings number="25" rate="25000" />
<ReadingTime integrationTime="0" lagTime="0" readDelay="10000" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="6000" bandwidth="90" attenuation="0" usage="ABS" />
</ReadingLabel>
</MeasurementReading>
</Well>
<CustomData />
</MeasurementAbsorbance>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
FACTS("ReaderNETwork","ReaderNETwork_Open","","0","");
Transfer_Rack("6","19",0,0,0,0,0,"","DM Nunc stronghold","Narrow","","","Infinite 200","","MP 3Pos Flat Grid19","1","(Not defined)","3");
FACTS("ReaderNETwork","ReaderNETwork_Close","","0","");
GroupEnd();
Comment("Bring back dilution plate to appropriate position in hotel");
Transfer_Rack("19","25",0,0,0,0,0,"","DM Nunc stronghold","Narrow","","","MP 3Pos Flat Grid19","","Hotel 3x4Pos Grid25to39","3","(Not defined)","CurrentDilutionPlate");
Variable(WaitBeforePlateFill,"(SamplingTime-5)*60",0,"How many strains do you have?",0,1.000000,3.000000,0,2,0,0);
IfThen("LOOP_Sampling",1,"SamplingNumber");
WaitTimer("4","WaitBeforePlateFill");
Else();
EndIf();
EndLoop();
Comment("Optionally stop shaking and bring DWBs to original position");
IfThen("ContiCult",1,"Yes");
FACTS("Cover","Cover_Open","","0","");
FACTS("Kuehner","Kuehner_stop","","0","");
StartTimer("1");
WaitTimer("1","PauseNachSchütteln");
BeginLoop("DWBnumber","DWB");
IfThen("LOOP_DWB",0,"1");
Variable(CurrentPlatePos,"4",0,"What is the desired shaking frequency (150 to 300)?",0,150.000000,300.000000,0,2,0,0);
Else();
Variable(CurrentPlatePos,"12",0,"What is the desired shaking frequency (150 to 300)?",0,150.000000,300.000000,0,2,0,0);
EndIf();
Transfer_Rack("50","29",0,0,1,1,0,"","DM 96 DWB GripUp sealed","Narrow","","","Kuhner Shaker ES-X  2x4x2Pos","","Pickolo-Light-Table","CurrentPlatePos","(Not defined)","1");
Transfer_Rack("29","19",0,0,0,1,0,"","DM 96 DWB GripUp sealed","Narrow","","","Pickolo-Light-Table","","MP 3Pos Flat Grid19","1","(Not defined)","LOOP_DWB");
EndLoop();
FACTS("Cover","Cover_Close","","0","");
Else();
EndIf();
Comment("Term, inactivate and wash");
Group("Inactivation");
Wash(255,42,1,42,2,"6",500,"8",500,10,70,30,1,0,1000,0);
Aspirate(255,"DM_Water free dispense","InactivationVolume","InactivationVolume","InactivationVolume","InactivationVolume","InactivationVolume","InactivationVolume","InactivationVolume","InactivationVolume",0,0,0,0,40,1,1,"0108¯1",0,0);
StartTimer("2");
WaitTimer("2","InactivationTime");
Dispense(255,"DM_Water free dispense","InactivationVolume","InactivationVolume","InactivationVolume","InactivationVolume","InactivationVolume","InactivationVolume","InactivationVolume","InactivationVolume",0,0,0,0,40,1,1,"0108¯1",0,0);
Wash(255,41,1,41,2,"6",500,"8",500,10,70,30,1,0,1000,0);
GroupEnd();
Group("Term Pipetting");
Wash(255,41,1,41,0,"20",500,"15",500,10,70,30,1,0,1000,0);
Wash(255,41,1,41,0,"15",500,"10",500,10,70,30,0,0,1000,0);
GroupEnd();
